DELPHI: {
    class: Microscope,
    role: delphi,
    emitters: ["Light Engine", "Optical Objective", "Optical Emission Filter", "EBeam Phenom"],
    detectors: ["Camera", "BSED Phenom", "NavCam"],
    actuators: ["Stage", "Objective Stage", "Optical Focus",
                "SEM Chamber", "EBeam focus", "NavCam focus", "TwinStage", "AntiBacklash Stage", "AntiBacklash Focus"],
}

"Light Engine": {
    class: lle.FakeLLE,
    role: light,
    init: {
        port: "/dev/ttyFTDI*",
        # source name -> 99% low, 25% low, centre, 25% high, 99% high wavelength in m
        # Values are from vendor: http://lumencor.com/products/filters-for-spectra-x-light-engines/
        sources: {"UV": [379.e-9, 384.e-9, 390.e-9, 396.e-9, 401.e-9], # 390/22
                  "cyan": [472.e-9, 479.e-9, 485.e-9, 491.e-9, 497.e-9], # 485/25
                  "green": [544.e-9, 552.e-9, 560.e-9, 568.e-9, 576.e-9], # 560/32
                  "red": [638.e-9, 643.e-9, 648.e-9, 653.e-9, 658.e-9], # 648/20
                 }
        },
    affects: ["Camera"],
}

"Phenom": {
    class: simsem.SimSEM,
    role: none,
    init: {
           image: "simsem-fake-output.h5", # any large 16 bit image is fine
           drift_period: 5, # seconds
    },
    children: {scanner: "EBeam Phenom",
               detector0: "BSED Phenom",
               focus: "EBeam focus",
    }
}

"EBeam Phenom": {
    # Internal child of SimSEM, so no class
    role: e-beam,
    init: {},
    properties: {
        dwellTime: 10.e-6, # s
    },
    affects: ["BSED Phenom", "Camera"] # affects the CCD in case of cathodoluminescence
}

"BSED Phenom": {
    # Internal child of SimSEM, so no class
    role: bs-detector,
    init: {},
}

"EBeam focus": {
    # Internal child of SimSEM, so no class
    role: ebeam-focus,
}

"Stage": {
    class: simulated.Stage,
    role: sem-stage,
    init: {axes: ["x", "y"]},
    properties: {
        speed: {"x": 0.01, "y": 0.01} # m/s
    }
}

# Allows to change pressure in the chamber (and load/unload the sample)
"SEM Chamber": {
    class: simulated.PhenomChamber,
    role: chamber,
    init: {
        positions: ["vented", "overview", "vacuum"],
        #has_pressure: False,
    },
}

"NavCam": {
    class: simcam.Camera,
    role: overview-ccd,
    children: {
        focus: "NavCam focus",
    },
    init: {
        image: "simcam-fake-overview.h5", # RGB 8-bits
    },
}

"NavCam focus": {
    # child of NavCam
    role: overview-focus,
    #affects: ["NavCam"],
}

"Optical Objective": {
    class: static.OpticalLens,
    role: lens,
    init: {mag: 60.0}, # ratio
    affects: ["Camera"]
}

"Optical Emission Filter": {
    class: static.LightFilter,
    role: filter,
    init: {band: [[420.e-9, 460.e-9],
                  [510.e-9, 532.e-9], 
                  [590.e-9, 624.e-9],
                  [677.e-9, 723.e-9]]}, # m,m
    affects: ["Camera"]
}

# Axes: X is horizontal on screen (going left->right), physical: far->close when looking at the door
#       Y is vertical on screen (going bottom->top), physical: left->right when looking at the door
"Camera": {
    class: andorcam2.FakeAndorCam2,
    role: ccd,
    init: {device: 0,
           transpose: [-2, -1], # rotated 90° clockwise
           image: "andorcam2-fake-clara.tiff", # only for simulator
    },
}

# Special stage that actually moves the SEM stage as requested, and the optical
# stage oppositely (based on a transformation matrix passed via metadata) to
# compensate for the lens move.
"TwinStage": {
    class: actuator.CoupledStage,
    role: stage,
    affects: ["EBeam Phenom", "Camera"],
    init: {},
    children: {"master": "Stage", "slave": "AntiBacklash Stage"},
}

"AntiBacklash Stage": {
    class: actuator.AntiBacklashActuator,
    role: align,
    init: {
        backlash: {"x": 100.e-6, "y": 100.e-6},
    },
    children: {"slave": "Objective Stage"},
}

# Use 2 MultiplexActuators to separate the axes of the TMCM over different roles
"Objective Stage": {
    class: actuator.MultiplexActuator,
    role: None,
    affects: ["Camera"],
    children: {"x": "Sample Holder Actuators", "y": "Sample Holder Actuators"},
    init: {
        axes_map: {"x": "x", "y": "y"},
        inverted: ["x", "y"], # inverted so it moves oppositely to the SEM stage
    },
}

# Ensures the focus is always at the position requested.
# The drawback is that it causes "shaking" of the image when lowering the focus.
"AntiBacklash Focus": {
    class: actuator.AntiBacklashActuator,
    role: focus,
    init: {
        # 10µm is equivalent to 200µm on the motor, due to the focus ratio.
        # 100µm should be enough for the focus, but 200µm should also compensate
        # for the cross-talk with the Y backlash.
        backlash: {"z": 10.e-6},
    },
    children: {"slave": "Optical Focus"},
}
# Axis Z: (Physical) bottom->top when looking at the door
#         (On screen) bottom->top (so distance to sample is smaller when going up)    
"Optical Focus": {
    class: actuator.MultiplexActuator,
    role: None,
    affects: ["Camera"],
    children: {"z": "Sample Holder Actuators"},
    init: {
        axes_map: {"z": "z"}
    },
}

# Controller for the X, Y, Z axes of the optical lens
"Sample Holder Actuators": {
    class: tmcm.TMCM3110,
    role: none,
    init: {
        port: "/dev/fake",
        axes: ["x", "y", "z"],
        ustepsize: [5.9e-9, 5.9e-9, 0.302e-9], # m/µstep
        refproc: "FakeReferencing", # referencing procedure for simulator
        temp: True,
        # inverted: ["y"],
    },
}


