SECOM: {
    class: Microscope,
    role: secom,
    emitters: ["Light Engine", "Optical Objective", "Optical Emission Filter", "SEM E-beam"],
    detectors: ["Camera", "SEM Detector"],
    actuators: ["Sample Stage", "Objective Stage", "Optical Focus"],
}

"Light Engine": {
    class: lle.LLE,
    role: light,
    init: {
        port: "/dev/ttyFTDI*",
        # source name -> 99% low, 25% low, centre, 25% high, 99% high wavelength in m
        # Values are from vendor: http://lumencor.com/products/filters-for-spectra-x-light-engines/
        sources: {"UV": [379.e-9, 384.e-9, 390.e-9, 396.e-9, 401.e-9], # 390/22
                  "cyan": [472.e-9, 479.e-9, 485.e-9, 491.e-9, 497.e-9], # 485/25
                  "green": [544.e-9, 552.e-9, 560.e-9, 568.e-9, 576.e-9], # 560/32
                  "red": [638.e-9, 643.e-9, 648.e-9, 653.e-9, 658.e-9], # 648/20
                 }
        },
    affects: ["Camera"],
}

# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: none,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {scanner: "SEM E-beam", detector0: "SEM Detector"}
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        # Use channels and limits to ensure the image has the same orientation
        # as in the SEM software.
        channels: [0, 1],
        limits: [[-3.1754, 3.1754], [-3.7, 3.7]],  # V
        park: [-5, -5], # V
        settle_time: 5.e-6, # s
        hfw_nomag: 0.25, # m
    },
    properties: {
        scale: [8, 8], # (ratio), start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio), start low for a big field of view
    },
    affects: ["SEM Detector", "Camera"] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SEM Detector": { # aka ETD
    # Internal child of Quanta ExtXY, so no class
    role: se-detector,
    init: {
        channel: 0,
        limits: [-3, 3] # V (max values ever possible)
    },
}

"Optical Objective": {
    class: static.OpticalLens,
    role: lens,
    init: {mag: 60.0}, # ratio (actually of the complete light path)
    affects: ["Camera"]
}

# Semrock FF01-440/521/607/700
"Optical Emission Filter": {
    class: static.LightFilter,
    role: filter,
    init: {band: [[420.e-9, 460.e-9],
                  [510.e-9, 532.e-9],
                  [590.e-9, 624.e-9],
                  [677.e-9, 723.e-9]]}, # m,m
    affects: ["Camera"]
}

# Axes: X is horizontal on screen (going left->right), physical: far->close when looking at the door
#       Y is vertical on screen (going bottom->top), physical: left->right when looking at the door
"Camera": {
    class: andorcam2.AndorCam2,
    role: ccd,
    init: {
        device: 0, # the only Andor camera connected so always 0
        transpose: [2, -1], # rotation by 90°
    },
    properties: {
        exposureTime: 0.3, # s
        # targetTemperature: -40, # °C
    }
}

# Use 3 MultiplexActuators to separate the axes of the PIGCS over different roles

# Axes should be synchronized with the camera
# Stage axes are moving the sample, so they should opposite direction than convention
# (so the stage "position" is the current position observed)
"Sample Stage": {
    class: actuator.MultiplexActuator,
    role: stage,
    affects: ["Camera", "SEM E-beam"],
    children: {"x": "Stage Actuators", "y": "Stage Actuators"},
    init: {
        axes_map: {"x": "x", "y": "y"},
        inverted: ["x", "y"],
    },
}

"Objective Stage": {
    class: actuator.MultiplexActuator,
    role: align,
    affects: ["Camera"],
    children: {"a": "Stage Actuators", "b": "Stage Actuators"},
    init: {
        axes_map: {"a": "a", "b": "b"},
        inverted: ["a", "b"],
    },
    properties: {
        speed: {'a': 0.001, 'b': 0.001} #m/s
    }
}

# Axis Z: (Physical) bottom->top when looking at the door
#         (On screen) bottom->top (so distance to sample is smaller when going up)
"Optical Focus": {
    class: actuator.MultiplexActuator,
    role: focus,
    affects: ["Camera"],
    children: {"z": "Stage Actuators"},
    init: {
        axes_map: {"z": "z"},
        inverted: ["z"],
    },
    properties: {
        speed: {'z': 0.01} #m/s
    }
}

# USB should be connected to a E-861 or C-867
# PI E-861/C-867 jumpers (. = off):
# A = 1234.6..
# B = 123..6..
# Z = 12.4.6..
# X = 12...6.. (C-867)
# Y = 1.34.6.. (C-867)

"Stage Actuators": {
    class: pigcs.Bus,
    role: none,
    init: {
        port: "/dev/ttyPIGCS",
        # axis -> controller, channel, closed-loop?
        axes: {"a": [1, 1, False], "b": [2, 1, False], "z": [3, 1, False],
               "x": [4, 1, True], "y": [5, 1, True]},
#         vmin: {"x": 2.4, "y": 2.8}, # V : lowest voltage which moves the actuators
#         speed_base: {"x": 0.02, "y": 0.02}, # m/s : speed at 3.5V
        # Z axis is linked to the lens with a ratio of ~4
        dist_to_steps: {"a": 100000, "b": 100000, "z": 400000}, # steps/m
    },
}

