SECOM: {
    class: Microscope,
    role: secom,
    emitters: [Spectra, "Nikon Lens", "MultiBand Fixed Filter", "EBeam ExtXY"],
    detectors: [Clara, "SED ExtXY"],
    actuators: ["OLStage", "SEM-Optical Alignment", "OpticalZ actuator"],
}

Spectra: {
    class: lle.LLE,
    role: light,
    init: {
        port: "/dev/ttyFTDI*",
        # source name -> 99% low, 25% low, centre, 25% high, 99% high wavelength in m
        # Values are quite approximate (only centre is pretty sure)
        sources: {"cyan": [465.e-9, 475.e-9, 485.e-9, 495.e-9, 505.e-9],
                  "green": [540.e-9, 570.e-9, 580.e-9, 590.e-9, 595.e-9],
                 }
        },
    affects: [Clara],
}

# In case lasers are used instead of the Spectra:
# (Spectra must be commented out and the SECOM definition updated)
#LightHub: {
#    class: omicronxx.MultixX,
#    role: light,
#    init: {
#        ports: "/dev/ttyFTDI*",
#        },
#    affects: [Clara],
#}


# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM ExtXY": {
    class: semcomedi.SEMComedi,
    role: none,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {scanner: "EBeam ExtXY", detector0: "SED ExtXY"}
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"EBeam ExtXY": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        # Use channels and limits to ensure the image has the same orientation
        # as in the SEM software.
        channels: [0, 1],
        limits: [[-3.1754, 3.1754], [-3.7, 3.7]],  # V
        park: [-5, -5], # V
        settle_time: 5.e-6, # s
        hfw_nomag: 0.25, # m
    },
    properties: {
        scale: [8, 8], # (ratio), start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio), start low for a big field of view
    },
    affects: ["SED ExtXY", Clara] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SED ExtXY": { # aka ETD
    # Internal child of Quanta ExtXY, so no class
    role: se-detector,
    init: {
        channel: 0,
        limits: [-3, 3] # V (max values ever possible)
    },
}

"Nikon Lens": {
    class: static.OpticalLens,
    role: lens,
    init: {
       mag: 100.0, # ratio, (actually of the complete light path)
       na: 0.95, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
    },
    affects: [Clara]
}

## Semrock FF01-524/628-25
#"MultiBand Fixed Filter": {
#    class: static.LightFilter,
#    role: filter,
#    init: {band: [[509.e-9, 539.e-9],
#                  [611.e-9, 644.e-9]]}, # m,m
#    affects: [Clara]
#}
# Semrock FF01-446/532/646-25
"MultiBand Fixed Filter": {
    class: static.LightFilter,
    role: filter,
    init:{band:
    [[431.e-9, 461.e-9],
    [517.e-9, 547.e-9],
    [631.e-9, 661.e-9]]}, # m,m
    affects: [Clara]
}

# Axes: X is horizontal on screen (going left->right), physical: far->close when looking at the door
#       Y is vertical on screen (going bottom->top), physical: left->right when looking at the door
Clara: { # Also works with iXon Ultra
    class: andorcam2.AndorCam2,
    role: ccd,
    init: {
        device: 0, # the only Andor camera connected so always 0
        transpose: [2, -1], # rotation by 90°
        # Look-up table for recommended EMCCD Real Gain (for iXon Ultra)
        # readout rate, gain, real gain (integer)
        emgains: [[17.e+6, 1, 200],
                  [17.e+6, 2, 150],
                  [17.e+6, 3, 100],
                  [10.e+6, 1, 200],
                  [10.e+6, 2, 100],
                  [10.e+6, 3, 100],
                  [ 5.e+6, 1, 100],
                  [ 5.e+6, 2,  50],
                  [ 5.e+6, 3,  50],
                  [ 1.e+6, 1,  50],
                  [ 1.e+6, 2,  50],
                  [ 1.e+6, 3,  50],
                 ],
    }, 
    properties: {
        exposureTime: 0.3, # s
        # For the Clara, the default (-45 °C), should be correct
        targetTemperature: -70, # °C , for iXon Ultra (as the default is too low)
    }
}

# Use 3 MultiplexActuators to separate the axes of the PIGCS over different roles

# Axes should be synchronized with the camera
# Stage axes are moving the sample, so they should opposite direction than convention
# (so the stage "position" is the current position observed)
"OLStage": {
    class: actuator.MultiplexActuator,
    role: stage,
    affects: [Clara, "EBeam ExtXY"],
    children: {"x": PIGCS, "y": PIGCS},
    init: {
        axes_map: {"x": "x", "y": "y"},
        inverted: ["x"],
    },
}

"SEM-Optical Alignment": {
    class: actuator.MultiplexActuator,
    role: align,
    affects: [Clara],
    children: {"a": PIGCS, "b": PIGCS},
    init: {
        axes_map: {"a": "a", "b": "b"},
        inverted: ["a"], # One additional mirror on the optical path compared to standard SECOM
    },
    properties: {
        speed: {'a': 0.001, 'b': 0.001} #m/s
    }
}

# Axis Z: (Physical) bottom->top when looking at the door
#         (On screen) bottom->top (so distance to sample is smaller when going up)
"OpticalZ actuator": {
    class: actuator.MultiplexActuator,
    role: focus,
    affects: [Clara],
    children: {"z": PIGCS},
    init: {
        axes_map: {"z": "z"}
    },
    properties: {
        speed: {'z': 0.01} #m/s
    }
}

# USB should be connected to a E-861 or C-867
# PI E-861/C-867 jumpers (. = off):
# A = 1234.6..
# B = 123..6..
# Z = 12.4.6..
# X = 12...6.. (C-867)
# Y = 1.34.6.. (C-867)

PIGCS: {
    class: pigcs.Bus,
    role: none,
    init: {
        port: "/dev/ttyPIGCS",
        # axis -> controller, channel, closed-loop?
        axes: {"a": [1, 1, False], "b": [2, 1, False], "z": [3, 1, False],
               "x": [4, 1, False], "y": [5, 1, False]},
        vmin: {"x": 2.4, "y": 2.}, # V : lowest voltage which moves the actuators
        #speed_base: {"x": 0.03, "y": 0.03}, # m/s : speed at 3.5V
        #dist_to_steps: {"a": 100000, "b": 100000}, # step/m
    },
}
