SECOMv2: {
    class: Microscope,
    role: secom,
    children: ["Light Engine", "Optical Objective", "Optical Emission Filter", "SEM E-beam",
               "Camera", "SEM Detector",
               "Sample Stage", "Objective Stage", "Optical Focus"],
}

# "Light Engine": {
#     class: lle.LLE,
#     role: light,
#     init: {
#         port: "/dev/ttyFTDI*",
#         # source name -> 99% low, 25% low, centre, 25% high, 99% high wavelength in m
#         # Values are from vendor: http://lumencor.com/products/filters-for-spectra-x-light-engines/
#         sources: {"UV": [379.e-9, 384.e-9, 390.e-9, 396.e-9, 401.e-9], # 390/22
#                   "cyan": [472.e-9, 479.e-9, 485.e-9, 491.e-9, 497.e-9], # 485/25
#                   "green": [544.e-9, 552.e-9, 560.e-9, 568.e-9, 576.e-9], # 560/32
#                   "red": [638.e-9, 643.e-9, 648.e-9, 653.e-9, 658.e-9], # 648/20
#                  }
#         },
#         # The light is reflected via a Semrock FF410/504/582/669-DI01-25X36
#     affects: ["Camera"],
# }

"Light Engine": {
    class: omicronxx.HubxX,
    role: light,
    init: {
        port: "/dev/ttyFTDI*",
    },
    # The light is reflected via a Semrock FF410/504/582/669-DI01-25X36
    affects: ["Camera"],
}

# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: null,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {scanner: "SEM E-beam", detector0: "SEM Detector"}
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        # Use channels and limits to ensure the image has the same orientation
        # as in the SEM software.
        channels: [0, 1],
        limits: [[-3.1754, 3.1754], [-3.7, 3.7]],  # V
        park: [-5, -5], # V
        settle_time: 5.e-6, # s
        hfw_nomag: 0.25, # m
        # 0 = Relay
        # 1 = Open drain output (Y0.0)
        # 2 = Digital Out 1
        # 3 = Digital Out 0
        # 4 = Status led
        # output ports -> True (indicate scanning) or False (indicate parked) + VA name
        # Conventional VA names are: external, blanker, led, power
        scanning_ttl: {0: [True, "external"], 4: True},
    },
    properties: {
        scale: [8, 8], # (ratio), start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio), start low for a big field of view
    },
    affects: ["SEM Detector", "Camera"] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SEM Detector": { # aka ETD
    # Internal child of Quanta ExtXY, so no class
    role: se-detector,
    init: {
        channel: 0,
        limits: [-3, 3] # V (max values ever possible)
    },
}

"Optical Objective": {
    class: static.OpticalLens,
    role: lens,
    init: {
       mag: 60.0, # ratio, (actually of the complete light path)
       na: 0.95, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
    },
    affects: ["Camera"]
}

# Semrock FF01-440/521/607/700
"Optical Emission Filter": {
    class: static.LightFilter,
    role: filter,
    init: {band: [[420.e-9, 460.e-9],
                  [510.e-9, 532.e-9],
                  [590.e-9, 624.e-9],
                  [677.e-9, 723.e-9]]}, # m,m
    affects: ["Camera"]
}

# Axes: X is horizontal on screen (going left->right), physical: far->close when looking at the door
#       Y is vertical on screen (going bottom->top), physical: left->right when looking at the door
"Camera": {
    class: andorcam3.AndorCam3,
    role: ccd,
    init: {
        device: 0, # the only Andor camera connected so always 0
        transp: [-2, 1], # rotation by 90°
    },
    properties: {
        exposureTime: 0.3, # s
        # targetTemperature: -40, # °C
    }
}

# Use 3 MultiplexActuators to separate the axes of the PIGCS over different roles

# Axes should be synchronized with the camera
# Stage axes are moving the sample, so they should opposite direction than convention
# (so the stage "position" is the current position observed)
"Sample Stage": {
    class: actuator.MultiplexActuator,
    role: stage,
    affects: ["Camera", "SEM E-beam"],
    dependencies: {"x": "Stage Actuators", "y": "Stage Actuators"},
    init: {
        axes_map: {"x": "sx", "y": "sy"},
    },
}

"Objective Stage": {
    class: actuator.MultiplexActuator,
    role: align,
    affects: ["Camera"],
    dependencies: {"x": "Stage Actuators", "y": "Stage Actuators"},
    init: {
        axes_map: {"x": "ox", "y": "oy"},
    },
}

# Axis Z: (Physical) bottom->top when looking at the door
#         (On screen) bottom->top (so distance to sample is smaller when going up)
"Optical Focus": {
    class: actuator.MultiplexActuator,
    role: focus,
    affects: ["Camera"],
    dependencies: {"z": "Stage Actuators"},
    init: {
        axes_map: {"z": "oz"}
    },
}

# Network should be set up and the C-863 should be configured for DHCP.
# Each E-861 should be configured for the right stage.
# PI E-861 addresses and stage configuration:
# optical X = 1 (open loop)
# optical Y = 2 (open loop)
# optical Z = 3 (closed loop)
# stage X = 4 (closed loop)
# stage Y = 5 (closed loop)

"Stage Actuators": {
    class: pigcs.Bus,
    role: null,
    init: {
        port: "autoip", # put "autoip" or the IP address (if fixed)
        # axis -> controller, channel, closed-loop?
        axes: {"ox": [1, 1, False], "oy": [2, 1, False],
               "oz": [3, 1, True],
               "sx": [4, 1, True], "sy": [5, 1, True]},
        inverted: ["ox", "oy", "oz", "sy"], # sx is good
        #dist_to_steps: {"ox": 100000, "oy": 100000}, # step/m
    },
}
