# Configuration for the SPARC v2 system with plates:
# 1. Vis-NIR
# 2. Fiber module (to time correlator)

SPARC2-VisNIR-TR: {
    class: Microscope,
    role: sparc2,
    children: ["SEM E-beam", "SEM Detector", "Calibration Light",
               "Optical Path Properties", "Spectrometer Selector",
               "Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer",
               "Spectrograph", "Fiber align",
               "Time Correlator", "Photon counter sync", "Photon counter signal",
               "Spec Filter Wheel", "Spec CCD Flipper", "Spectrograph focus",
               "Mirror Actuators", "Mirror Actuators in XY referential", "Slit",
               "Lens1 Mover", "Lens2 Switch",
               "TC Filter Wheel", "TC Optical Density Filter", "Shutter 0", "Shutter 1",
               "CL Detector",],
}

# Light (lamp with known spectrum)
"Calibration Light": {
    class: light.Light,
    role: "brightlight",
    power_supplier: "Power Control Unit",
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer",
              "Time Correlator", "Photon counter sync", "Photon counter signal"],
}

"Power Control Unit": {
    class: powerctrl.PowerControlUnit,
    role: "power-control",
    init: {
#        port: "/dev/fake", # for simulator
        port: "/dev/ttyPMT*",
        pin_map: {
            "Camera": 0,
            "Spectrograph": 2,
            "Optical Actuators": 4,
            "Calibration Light": 6,
        },
        delay: { # Time it takes before a component is accessible
            "Calibration Light": 1, # To turn on/off the light, with most bulbs it's very fast
            "Camera": 2,
            "Spectrograph": 90, # SR-193 needs a looong time to initialise
            "Optical Actuators": 1,
        },
        init: { # Which component to power on from the very beginning (to save time)
            "Calibration Light": True, # turn if on initially, to warm up. It will automatically be off when the component starts
            "Camera": True,
            "Spectrograph": True,
            "Optical Actuators": True,
        },
        # List of EEPROM IDs (of the plates) which are required to start properly
        # TODO: remove the one from the power control unit itself
        ids: [],
    }
}

# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: null,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {
       scanner: "SEM E-beam",
       detector0: "SEM Detector",
       detector2: "TR CL PMT",
    }
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        channels: [1, 0],
        limits: [[0, 5], [0, 5]],  # V
        park: [0, 0], # V
        # Digital output port mapping on the Delmic scanning box v2:
        # 0 = Relay
        # 1 = Open drain output (Y0.0)
        # 2 = Digital Out 1
        # 3 = Digital Out 0
        # 4 = Status led
        scanning_ttl: {4: True}, # output ports -> True (indicate scanning) or False (indicate parked)
        settle_time: 5.e-6, # s
        hfw_nomag: 0.14, # m
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio)
    },
    affects: ["SEM Detector", "VisNIR Spectrometer", "Camera", "IR Camera",
              "IR Spectrometer", "Time Correlator", "Photon counter sync", "Photon counter signal"] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI1/AI9 (differential)
"SEM Detector": { # aka ETD
    # Internal child of SEM Scan Interface, so no class
    role: se-detector,
    init: {
        channel: 0, # 0-> sawtooth waves, 1-> square waves
        limits: [-3, 3], # V
    },
}

"TR CL PMT": { # the raw detector of the PMT
    # Internal child of SEM Scan Interface, so no class but instead a creator
    role: null,
    init: {
        channel: 2,
        # TODO: check the limits
        limits: [-2.5, 2.5], # V, with contrast reversed
    },
}

"CL Detector": {
    class: pmtctrl.PMT,
    role: cl-detector,
    init: {
        settle_time: 0.5,  # s, time for the shutter to fully open
    },
    dependencies: {
       "detector": "TR CL PMT",
       "pmt-signal": "Photon counter signal",
    },
}


"Optical Path Properties": {
    class: static.OpticalLens,
    role: lens,
    # Standard mirror config
    init: {
       mag: 0.31, # ratio
       na: 0.2, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
       pole_pos: [516, 634], # (px, px), position of the pole (aka the hole in the mirror)
       x_max: 13.25e-3,  # m, the distance between the parabola origin and the cutoff position
       hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
       focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
       parabola_f: 2.5e-3,  # m, parabola_parameter=1/4f
       # TODO: update for the Quanta
       rotation: -1.570796326795, # rad, 90° rotation between optical axis and SEM Y axis
    },
    persistent: {
        properties: [polePosition],
    },
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer",
              "Time Correlator", "Photon counter sync", "Photon counter signal"]
}

# Controller for the motors moving the various parts of the optical box
# DIP must be configured with address 2 (= 0100000)
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        port: "/dev/ttyTMCM*",
        #port: "/dev/fake6",
        address: 2,
        #address: null,
        axes: ["l1", "l2", "spec-sel", "fiby", "slit"],
        # These values only need to be roughly correct
        ustepsize: [25.1e-9, 25.1e-9, 25.1e-9, 5.86e-9, 5.e-9], # m/µstep
        unit: ["m", "m", "m", "m", "m"],
        refproc: "Standard",
        refswitch: {"l1": 0, "l2": 0, "spec-sel": 4, "fiby": 4},
        inverted: ["l2"],
    },
}

# The first lens of Plate 1, able to move along the whole range
"Lens1 Mover": {
    class: actuator.MultiplexActuator,
    role: "lens-mover",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l1"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.02637} # m
    },
    persistent: {
        metadata: [FAV_POS_ACTIVE],
    },
    affects: ["Lens2 Switch"],
}

# The second lens of Plate 1, either to working or parking position
"Lens2 Switch": {
    class: actuator.FixedPositionsActuator,
    role: "lens-switch",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axis_name: "l2",
        positions: {
            -0.049: "on",
            0.0: "off", # completely out of the path
        },
    },
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer",
              "Time Correlator", "Photon counter sync", "Photon counter signal"],
}

# Control the slit position to either fully-open or small (dependent on the spectrometer slit-in)
"Slit": {
    class: actuator.FixedPositionsActuator,
    role: "slit-in-big",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axis_name: "slit",
        positions: {
            0: "on", # fully opened
            0.0012: "off", # opening based on the small slit
        },
    },
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer"],
}

# Note that the next two components actually move the _same_ axis!
# Mirror & Lens in Plate 2, to change X&Y of fiber alignment
"Fiber align": {
    class: actuator.MultiplexActuator,
    role: "fiber-aligner",
    dependencies: {"x": "Optical Actuators", "y": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel", "y": "fiby"},
        ref_on_init: ["y"],
    },
    affects: ["Time Correlator", "Photon counter sync", "Photon counter signal"],
}

# Mirror in Plate 2, selects between spectrometer and external optics (time-correlator)
"Spectrometer Selector": {
    class: actuator.MultiplexActuator,
    role: "spec-selector",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Position of the mirror to select the external spectrometer (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.0116214336}, # m
        FAV_POS_ACTIVE_DEST: ["Fiber align", "Time Correlator", "Photon counter sync", "Photon counter signal"],
        FAV_POS_DEACTIVE: {"x": 0.013419}, # m
        FAV_POS_DEACTIVE_DEST: ["Camera", "Integrated Spectrometer", "Spectral Camera", "Spectrometer"], # m
    },
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer",
              "Time Correlator", "Photon counter sync", "Photon counter signal"],
}

# Internal Spectrograph = Kymera 193 (+ 2 cameras)
"Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph,
    power_supplier: "Power Control Unit",
    init: {
        device: 0,
        #device: "fake",
        slits: {1: "slit-in", # INPUT_SIDE
        },
        bands: { # The filters in the filter-wheel
            1: "pass-through",
            6: [430.e-9, 470.e-9], # pos -> m,m
            3: [530.e-9, 570.e-9],
            4: [580.e-9, 620.e-9],
            5: [630.e-9, 670.e-9],
            2: [780.e-9, 820.e-9],
        },
        fstepsize: 30.e-6, # m, size of one focus step  (Note: it used to be set at 10µm, but from physical inspection 30µm seems more correct)
    },
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer"],
}

"Spectrograph focus": {
    class: actuator.MultiplexActuator,
    role: "focus",
    dependencies: {"z": "Spectrograph"},
    init: {
        axes_map: {"z": "focus"},
    },
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer"],
}

# Provide the filter wheel of the spectrograph as a separate component
"Spec Filter Wheel": {
    class: actuator.MultiplexActuator,
    role: filter,
    dependencies: {"band": "Spectrograph"},
    init: {
        axes_map: {"band": "band"},
    },
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer"],
}

# Provide the mirror (aka port selector) of the spectrograph as a separate component
"Spec CCD Flipper": {
    class: actuator.FixedPositionsActuator,
    role: "spec-det-selector",
    dependencies: {"rx": "Spectrograph"},
    init: {
        axis_name: "flip-out",
        positions: {
            0: ["Camera", "VisNIR Spectrometer"],
            1.5707963267948966: ["IR Camera", "IR Spectrometer"],
        },
    },
    affects: ["Camera", "VisNIR Spectrometer", "IR Camera", "IR Spectrometer"],
}

# Depending exactly on the configuration, it might also be used for spectrometer
"Camera": {
    class: andorcam3.AndorCam3,
    role: ccd0,
    power_supplier: "Power Control Unit",
    init: {
        device: 0,  # The first Andor 3 available (there is only one)
        transp: [1, 2],
    },
    properties: {
        targetTemperature: -10, # °C
    },
}

"VisNIR Spectrometer": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer0,
    dependencies: {detector: "Camera", spectrograph: "Spectrograph"},
    init: {
        transp: [1, 2], # only applied to the spectrometer data (not raw CCD)
    },
    properties: {
        #binning: [4, 512], #Only the center TODO
    },
}

"IR Camera": {
    class: andorcam2.AndorCam2,
    role: sp-ccd1,
    init: {
        device: 0,
        #device: "fake",
        #image: "sparc-spec-sim.h5", # only for simulator
    },
    properties: {
        targetTemperature: -65, # °C
    },
}

"IR Spectrometer": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer1,
    dependencies: {detector: "IR Camera", spectrograph: "Spectrograph"},
    init: {
        transp: [1, 2], # only applied to the spectrometer data (not raw CCD)
    },
}

# DIP must be configured with address 6 (= 0110000)
"Time-Correlator Actuators": {
    class: tmcm.TMCLController,
    role: null,
    init: {
        port: "/dev/ttyTMCM*",
        address: 6,
        axes: ["od", "fw"],
        # These values only need to be roughly correct
        # od: 2.72e-5 rad/ustep, 0.04 -> 4 od = 270° (/360°) -> 2.286e-5 od/ustep
        ustepsize: [2.286e-05, 3.392e-5], # od/µstep, rad/µstep
        rng: [[-0.99999075, 3.00000925], null],
        unit: ["od", "rad"],
        refproc: "Standard",
        refswitch: {"fw": 0, "od": 0},
        inverted: ["od"],
        do_axes: {
            # channel -> axis name, reported position when high, reported position when low, transition period (s)
            4: ["shutter0", 0, 1, 0.5], # high: open = 0
            5: ["shutter1", 0, 1, 0.5], # low: closed = 1
        },
        # LED protection for digital output channels
        led_prot_do: {
            # VERY IMPORTANT TO GET THIS RIGHT, WRONG VALUE WILL DAMAGE INSTRUMENT!
            4: 1,  # position when leds are on (1 = shutter closed)
            5: 1
        },
    },
}

"TC Filter Wheel": {
    class: actuator.FixedPositionsActuator,
    role: "tc-filter",
    dependencies: {"band": "Time-Correlator Actuators"},
    init: {
        axis_name: "fw",
        # It supports up to 8 filters
        positions: {
            # pos (rad) -> m,m
            0.027484197:       "pass-through",     # 1
            0.81288236:        [375.e-9, 425.e-9], # 2
            1.598280523:       [425.e-9, 475.e-9], # 3
            2.383674197:       [475.e-9, 525.e-9], # 4
            3.169074197:       [525.e-9, 575.e-9], # 5
            3.954475014:       [575.e-9, 625.e-9], # 6
            4.739874197:       [625.e-9, 675.e-9], # 7
            5.525274197:       [675.e-9, 725.e-9], # 8
        },
        cycle: 6.283185, # position of ref switch (0) after a full turn
    },
    affects: ["Time Correlator", "Photon counter sync", "Photon counter signal", "CL Detector"],
}

"TC Optical Density Filter": {
    class: actuator.LinearActuator,
    role: "tc-od-filter",
    dependencies: {"density": "Time-Correlator Actuators"},
    init: {
        axis_name: "od",
        # position when referenced (adjusted to be a multiple of the actuator stepsize)
        offset: -3.00000925, # od
        ref_start: 2.8 #  a little before the reference (inverted axis)
    },
    affects: ["Time Correlator", "Photon counter sync", "Photon counter signal", "CL Detector"],
}

"Time Correlator": {
    class: picoquant.PH300,
    role: time-correlator,
    init: {
        #device: "fake",
        device: null, # put serial number, or it will pick the first one found
        disc_volt: [50.e-3, 50.e-3], # V, discriminator for detectors 0/1 (< 0.8 V)
        zero_cross: [10.e-3, 10.e-3], # V (< 20 mV)
        shutter_axes: {
        # internal child role of the actuator -> axis name, position when shutter is closed (ie, protected), position when opened (receiving light)
            "shutter0": ["x", 1, 0],
            "shutter1": ["x", 1, 0],
        },
    },
    # These children allow to have access to the raw data on the PMTs
    children: {
        "detector0": "Photon counter sync",
        "detector1": "Photon counter signal",
    },
    dependencies: {
        "shutter0": "Shutter 0",
        "shutter1": "Shutter 1",
    },
}

"Photon counter sync": {
    # Internal child of "Time Correlator", so no class
    role: photo-detector1,
}

"Photon counter signal": {
    # Internal child of "Time Correlator", so no class
    role: photo-detector0, # det0, to be shown as main graph in GUI
}

"Shutter 0": {
    class: actuator.MultiplexActuator,
    role: "shutter0",
    dependencies: {"x": "Time-Correlator Actuators"},
    init: {
        axes_map: {"x": "shutter0"},
    },
    affects: ["Time Correlator", "Photon counter sync"],
}

"Shutter 1": {
    class: actuator.MultiplexActuator,
    role: "shutter1",
    dependencies: {"x": "Time-Correlator Actuators"},
    init: {
        axes_map: {"x": "shutter1"},
    },
    affects: ["Time Correlator", "Photon counter signal"],
}

# Controller for moving the 'Redux' stage
# DIP must be configured with address 4 (= 0010000)
"Mirror Actuators": {
    class: tmcm.TMCLController,
    role: "mirror",
    init: {
        #port: "/dev/fake6",
        #address: null,
        port: "/dev/ttyTMCM*",
        address: 4,
        axes: ["l", "s"],
        ustepsize: [5.9e-9, 5.9e-9], # m/µstep
        rng: [[0, 51.e-3], [-1.5e-3, 1.5e-3]],  # m, min/max
        refproc: "Standard",
        refswitch: {"s": 0, "l": 0},
    },
    metadata: {
        # Default position of the mirror engaged (will be improved during alignment)
        # TODO: to be calibrated
        FAV_POS_ACTIVE: {"l": 0.048, "s": 0.0020},  # m, m
    },
    persistent: {
        metadata: [FAV_POS_ACTIVE], 
    },
}

# Internal component to convert between the referential of the mirror actuators
# and the X/Y referential of the SEM. Used by the mirror alignment functions.
"Mirror Actuators in XY referential": {
    class: actuator.ConvertStage,
    role: "mirror-xy",
    dependencies: {"orig": "Mirror Actuators"},
    init: {
        axes: ["l", "s"], # mapped respectively to X, Y
        rotation: -1.0471975511965976, # rad (= 60°)
    },
}
