Optical: {
    class: Microscope,
    role: optical,
    children: [Light, "Optical Objective", "Optical Emission Filter",
               "Camera", "FakeRedStoneStage", "Objective Stage", "Optical Focus"],
}

Light: {
    class: simulated.Light,
    role: light,
    affects: ["Camera"],
    properties: {
        #power: 10 # W
    }
}
"Optical Objective": {
    class: static.OpticalLens,
    role: lens,
    init: {mag: 10.0}, # ratio
    affects: ["Camera"]
}

"Optical Emission Filter": {
    class: static.LightFilter,
    role: filter,
    init: {band: [[430.e-9, 480.e-9], [520.e-9, 600.e-9]]}, # m,m
    affects: ["Camera"]
}

"Camera": {
    class: andorcam2.AndorCam2,
    role: ccd,
    init: {
        device: 0, # 0 is almost always correct
        # hw_trigger_invert: True,  # Trigger activated on falling edge (= blanker going from high to low)
        # shutter_times: [10.e-3, 10.e-3], # s, opening/closing times (also forces)
    },
    properties: {
        targetTemperature: 25,  # °C, to disable active cooling
        fanSpeed: 0,  # To disable the fan
    }
}

"FakeRedStoneStage": {
    class: simulated.Stage,
    role: stage,
    init: {axes: ["x", "y"]},
    affects: ["Camera"],
    properties: {
        speed: {'x':0.1, 'y':0.1} #m/s
    }
}

# Use 2 MultiplexActuators to separate the axes of the PIGCS over different roles
"Objective Stage": {
    class: actuator.MultiplexActuator,
    role: align,
    affects: ["Camera"],
    dependencies: {"a": FakePIGCS, "b": FakePIGCS},
    init: {
        axes_map: {"a": "a", "b": "b"},
        inverted: ["b"]
    },
    properties: {
        speed: {'a': 0.1, 'b': 0.1} #m/s
    }
}

"Optical Focus": {
    class: actuator.MultiplexActuator,
    role: focus,
    affects: ["Camera"],
    dependencies: {"z": FakePIGCS},
    init: {
        axes_map: {"z": "z"}
    },
    properties: {
        speed: {'z': 0.1} #m/s
    }
}

FakePIGCS: {
    class: simulated.Stage,
    role: AlignAndFocus,
    init: {axes: ["a", "b", "z"]},
}
