# Fake optical microscope to be able to use just a Andor SDK3 camera such as
# the Neo or Zyla. If the SDK is installed, but not camera is plugged in, it
# will likely find the integrated simulator (SimCam).
Optical: {
    class: Microscope,
    role: optical,
    children: [Light, "Optical Objective", "Optical Emission Filter", Cam,  "FakeStage", 
              "Objective Stage", "Optical Focus"],
}

Light: {
    class: simulated.Light,
    role: light,
    affects: [Cam],
}

"Optical Objective": {
    class: static.OpticalLens,
    role: lens,
    init: {mag: 10.0}, # ratio
    affects: [Cam]
}

"Optical Emission Filter": {
    class: static.LightFilter,
    role: filter,
    init: {band: [[430.e-9, 480.e-9], [520.e-9, 600.e-9]]}, # m,m
    affects: [Cam]
}

Cam: {
    class: andorcam3.AndorCam3,
    role: ccd,
    init: {
           device: 0,  # if a real camera is plugged in, it's usually 0
           bitflow_install_dirs: "/usr/share/bitflow/", # Put the path where Bitflow data is installed
           # max_res: [320, 240],
           # transp: [-2, 1]
    },
    properties: {
        # to disable the fan
        fanSpeed: 0,
        targetTemperature: 25,
    }
}

"FakeStage": {
    class: simulated.Stage,
    role: stage,
    init: {axes: ["x", "y"]},
    affects: [Cam],
    properties: {
        speed: {'x':0.1, 'y':0.1} #m/s
    }
}

# Use 2 MultiplexActuators to separate the axes of the PIGCS over different roles
"Objective Stage": {
    class: actuator.MultiplexActuator,
    role: align,
    affects: [Cam],
    dependencies: {"a": FakePIGCS, "b": FakePIGCS},
    init: {
        axes_map: {"a": "a", "b": "b"},
        inverted: ["b"]
    },
    properties: {
        speed: {'a': 0.1, 'b': 0.1} #m/s
    }
}

"Optical Focus": {
    class: actuator.MultiplexActuator,
    role: focus,
    affects: [Cam],
    dependencies: {"z": FakePIGCS},
    init: {
        axes_map: {"z": "z"}
    },
    properties: {
        speed: {'z': 0.1} #m/s
    }
}

FakePIGCS: {
    class: simulated.Stage,
    role: null,
    init: {axes: ["a", "b", "z"]},
}
