MultiBeamSEM: {
    class: Microscope,
    role: mbsem,
    children: ["DiagnosticCam", "Sample Stage", "Optical Objective"],
}


# Axes: X is horizontal on screen (going left->right), physical: far->close when looking at the door
#       Y is vertical on screen (going bottom->top), physical: left->right when looking at the door
"Diagnostic Camera": {
    class: ueye.Camera,
    role: diagnostic-ccd,
    dependencies: {"focus": "Sample Stage"},
    init: {
        device: null,
    },
}

# Sets the optical path magnification and thus compute the pixel size of the diagnostic camera.
"Optical Objective": {
    class: static.OpticalLens,
    role: lens,
    init: {
        # Adjust to have a small depthOfField, which makes the focus blur stronger.
        mag: 60, # ratio, magnifying
        na: 0.95,  # numerical aperture
        ri: 1,  # refractive index
    },
    affects: ["Diagnostic Camera"],
}

"Sample Stage": {
    class: pigcs.Bus,
    role: stage,
    init: {
        port: "/dev/ttyUSB0",
        # axis -> controller, channel, closed-loop?
        axes: {
            "z": [null, "Z", True]
        },
    },
}
