# Allows to control an Orsay Physics FIB from Odemis (and nothing else)
Orsay: {
    class: Microscope,
    role: fib,  # Use "sem" for using the GUI
    children: [
        "Pneumatic Suspension", "Chamber", "Pumping System", "FIB Vacuum",
        "UPS",
        "GIS", "GIS Reservoir",
        "Chamber Light",
        "Ion Source",
        "Ion Beam",
        "Ion Focus",
        "FIB Aperture",
        "FIB Scanner",
        "ETD",
    ]
}

# Connection to the Orsay server
# Simulation:   192.168.56.101
# Hardware:     192.168.30.101
"Orsay Server": {
    class: orsay.OrsayComponent,
    role: null,
    init: {
           host: "192.168.56.101"
    },
    children: {
        pneumatic-suspension: "Pneumatic Suspension",
        pressure: "Chamber",
        pumping-system: "Pumping System",
        fib-vacuum: "FIB Vacuum",
        ups: "UPS",
        gis: "GIS",
        gis-reservoir: "GIS Reservoir",
        light: "Chamber Light",
        fib-source: "Ion Source",
        fib-beam: "Ion Beam",
        fib-aperture: "FIB Aperture",
        scanner: "FIB Scanner",
        focus: "Ion Focus",
        detector: "ETD",
    }
}

"Pneumatic Suspension": {
    role: pneumatic-suspension,
    init: {}
}

"Chamber": {
    role: chamber,
    init: {}
}

"Pumping System": {
    role: pumping-system,
    init: {}
}

"UPS": {
    role: ups,
    init: {}
}

"GIS": {
    role: gis,
    init: {}
}

"GIS Reservoir": {
    role: gis-reservoir,
    init: {}
}

"Chamber Light": {
    role: chamber-light,
    init: {}
}

"FIB Vacuum": {
    role: fib-vacuum,
    init: {}
}

"Ion Source": {
    role: ion-source,
    init: {}
}

"Ion Beam": {
    role: null,
    init: {}
}

"FIB Aperture": {
    role: fib-aperture,
    init: {}
}

"FIB Scanner": {
    role: ion-beam,  # use "e-beam" for the GUI
    init: {}
}

"ETD": {
    role: se-detector,
    init: {}
}

"Ion Focus": {
    role: ion-focus,  # Use "ebeam-focus" for the GUI
    init: {
      rng: [0.0, 0.1]  # range of the focus in meter
    },
    metadata: {
        CALIB: 0.18e+6,  # Volt per meter. Read the driver specifications for more details on this value
    }
}
