# Configuration to use the ETD of a SEM (values for a FEI Quanta)
SECOM: {
    class: Microscope,
    role: sem,
    emitters: ["EBeam ExtXY"],
    detectors: ["SED ExtXY"],
    actuators: ["Perfect Stage"],
}

# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM ExtXY": {
    class: semcomedi.SEMComedi,
    role: null,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {scanner: "EBeam ExtXY", detector0: "SED ExtXY"}
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"EBeam ExtXY": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        channels: [0, 1],
        limits: [[-4, 4], [-3, 3]],  # V
        park: [-4.5, -4.5], # V
        # Digital output port mapping on the Delmic scanning box v2:
        # 0 = Relay
        # 1 = Open drain output (Y0.0)
        # 2 = Digital Out 1
        # 3 = Digital Out 0
        # 4 = Status led
        scanning_ttl: {0: False, 4: True}, # output ports -> True (indicate scanning) or False (indicate parked)
        settle_time: 10.e-6, # s
        hfw_nomag: 10.e-3, # m
    },
    properties: {
        scale: [8, 8], # (ratio)
        dwellTime: 10.e-6, # s
        magnification: 1000, # (ratio)
    },
    affects: ["SED ExtXY"] # affects the CCD in case of cathodoluminescence
}

# Warning: adding detectors increases the maximum dwell time. So remove non-used
# detectors.

# Must be connected on AI 0/AI GND
"SED ExtXY": { # aka ETD
    # Internal child of Quanta ExtXY, so no class
    role: se-detector,
    init: {
        channel: 0,
        limits: [-3, 3] # V
    },
}

# Must be connected on AI 1/AI GND
#"BSD ExtXY": { # aka Backscatter
#    # Internal child of Quanta ExtXY, so no class
#    role: bs-detector,
#    init: {
#        channel: 1,
#        limits: [-3, 3] # V
#    },
#}
#

"Perfect Stage": {
    class: simulated.Stage,
    role: stage,
    init: {axes: [x, y]},
    affects: ["SED ExtXY"],
    properties: {
        speed: {x: 0.1, y: 0.1} #m/s
    }
}
