# Configuration to test just a spectrometer SR303i
SPARC-Spec: {
    class: Microscope,
    role: sparc,
    children: ["SEM E-beam",
    "SEM Detector", "Spectrometer",
    "Mirror Actuators"],
}

# Can simulate a SEM connected to a DAQ board by using the comedi_test driver:
# sudo modprobe comedi comedi_num_legacy_minors=4
# sudo modprobe comedi_test
# sudo comedi_config /dev/comedi0 comedi_test 1000000,1000000
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: none,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {
       scanner: "SEM E-beam",
       detector0: "SEM Detector",
    }
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        channels: [1, 0],
        limits: [[0, 5], [0, 5]],  # V
        park: [0, 0], # V
        settle_time: 5.e-6, # s
        hfw_nomag: 0.25, # m
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio)
    },
    affects: ["SEM Detector", "Spectrometer"] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SEM Detector": { # aka ETD
    # Internal child of SEM Scan Interface, so no class
    role: se-detector,
    init: {
        channel: 0, # 0-> sawtooth waves, 1-> square waves
        limits: [-3, 3] # V
    },
}

# Spectrometer = Andor iVac 316 + Shamrock SR303i (connected via USB)
"Spectrometer": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer,
    children: {detector: "Spectral Camera", spectrograph: "Spectrograph"},
    properties: {
        #binning: [4, 256],
    },
}

"Spectral Camera": {
    class: andorcam2.AndorCam2,
    role: sp-ccd,
    init: {
           device: 0, # 0 = first and only Andor SDK 2 camera, use "fake" if no camera is present
           transpose: [1, -2], # if mirrored on X axis (due to a Odemis bug, it's the second dim which has the -)
    },
    properties: {
        targetTemperature: -60, # °C
    },
}

"Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph,
    affects: ["Monochromator PMT", "Spectral Camera"],
    children: {"ccd": "Spectral Camera"},
    init: {
        device: 0,
    },
}

"Mirror Actuators": {
    class: simulated.Stage,
    role: mirror,
    affects: [SpecSimCam],
    init: {axes: ["x", "y", "rz", "ry"]}, # rz = yaw, ry = pitch
    properties: {
        speed: {"x": 0.1, "y": 0.1, "rz": 0.1, "ry": 0.1} #m/s
    }
}

