SECOM-Actuators: {
    class: Microscope,
    role: mover,
    emitters: [],
    detectors: [],
    actuators: ["OLStage", "SEM-Optical Alignment", "OpticalZ actuator"],
}

# Use 3 CombinedActuators to separate the axes of the PIGCS over different roles

# Axes should be synchronized with the camera
"OLStage": {
    class: CombinedActuator,
    role: stage,
    children: {"x": PIGCS, "y": PIGCS},
    init: {
        axes_map: {"x": "x", "y": "y"},
#        inverted: ["x"]
    },
    properties: {
        speed: {'x': 0.001, 'y': 0.001} #m/s
    }
}

"SEM-Optical Alignment": {
    class: CombinedActuator,
    role: align,
    children: {"a": PIGCS, "b": PIGCS},
    init: {
        axes_map: {"a": "a", "b": "b"},
#        inverted: ["a"]
    },
    properties: {
        speed: {'a': 0.001, 'b': 0.001} #m/s
    }
}

# Z axis of focus: increasing means "closer to the sample"
"OpticalZ actuator": {
    class: CombinedActuator,
    role: focus,
    children: {"z": PIGCS},
    init: {
        axes_map: {"z": "z"}
    },
    properties: {
        speed: {'z': 0.01} #m/s
    }
}

# USB should be connected to a E-861 or C-867
# PI E-861/C-867 jumpers (. = off):
# A = 1234.6..
# B = 123..6..
# Z = 12.4.6..
# X = 12...6.. (C-867)
# Y = 1.34.6.. (C-867)

PIGCS: {
    class: pigcs.Bus,
    role: none,
    init: {
        port: "/dev/ttyPIGCS",
        # axis -> controller, channel, closed-loop?
        axes: {"a": [1, 1, False], "b": [2, 1, False], "z": [3, 1, False],
               "x": [4, 1, False], "y": [5, 1, False]},
        vmin: {"x": 2.4, "y": 2.}, # V : lowest voltage which moves the actuators
        #speed_base: {"x": 30., "y": 30.}, # m/s : speed at 3.5V
    },
}


