# This microscope file uses simplified simulated stage and not the realistic one.
# The acquisition happens through a simulated SEM & FIB.

"METEOR TESCAN FIBSEM Full-Sim": {
    class: Microscope,
    role: meteor,
}

# Connects to simulated SEM
"SEM": {
    class: simsem.SimSEM,
    role: null,
    init: {
        image: "simsem-fake-output.h5", # any large 16 bit image is fine
    },
    children: {
        scanner: "EBeam Scanner",
        detector0: "EBeam Detector",
        focus: "EBeam Focus",
    }
}

"FIB": {
    class: simsem.SimSEM,
    role: fibsem,
    init: {
        image: "sparc-etd-gold-balls.h5", # any large 16 bit image is fine
    },
    children: {
        scanner: "Ion Scanner",
        detector0: "Ion Detector",
    }
}

"EBeam Scanner": {
    role: e-beam,
    init: {},
    affects: ["EBeam Detector"],
}

"EBeam Detector": {
    role: se-detector,
    init: {},
}

"EBeam Focus": {
    role: ebeam-focus,
    init: {},
    affects: ["EBeam Scanner"]
}

# FIB specific components
"Ion Scanner": {
    role: ion-beam,
    init: {},
    affects: ["Ion Detector"],
}

"Ion Detector": {
    role: se-detector-ion,
    init: {},
}

# With calibration values for sample stage
"Stage": {
    class: tmcm.TMCLController,
    role: stage-bare,
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["x", "y", "z", "rx", "rz"],
        ustepsize: [1.e-6, 1.e-6, 1.e-6, 1.2e-4, 1.2e-4], # unit/µstep, 10x faster than real life values for simulation purposes
        rng: [[ -50.e-3, 50.e-3 ],
              [ -50.e-3, 50.e-3 ],
              [ 0, 94.e-3 ],
              [ -0.4363323129985824, 1.0122909661567112 ],
              [ 0, 6.283185307179586 ]
        ],
        unit: ["m", "m", "m", "rad", "rad"],
        refproc: "Standard",
    },
    metadata: {
        # Loading position:
        FAV_POS_DEACTIVE: {
            'rx': 0.0,
            'rz': 0.0,
            'x': 0.0,
            'y': 0.0,
            'z': 0.0,
        },
        # XYZ ranges for SEM & METEOR (FM imaging range should perfectly match the POS_ACTIVE_RANGE metadata of the "Meteor Stage" component!),
        # Z range is based on centering a sample at the FIB/SEM coincident point at a Z coordinate of ~ 30 mm:
        SEM_IMAGING_RANGE: {
            "x": [-13.e-3, 14.e-3],
            "y": [-25.e-3, 20.e-3],
            "z": [28.e-3, 38.e-3]  # NOTE: increased max z, since grid 1 center was outside
        },
        FM_IMAGING_RANGE: {
            "x": [25.e-3, 55.e-3],
            "y": [-23.e-3, 8.e-3],
            "z": [28.e-3, 37.e-3]
        },
        # Grid centers in SEM range, at rx = FAV_SEM_POS_ACTIVE,
        # These values are based on the expectation from the CAD model. Recalibrate for each system:
        SAMPLE_CENTERS: {
            "GRID 1": {
                'x': -2.611e-3,
                'y': -13.540e-3,
                'z': 35.651e-3
            },
            "GRID 2": {
                'x': 1.389e-3,
                'y': -13.540e-3,
                'z': 35.651e-3
            }
        },
        # Calibrated values used for the SEM/FM switching behaviour
        CALIB: {
            "version": "tescan_1",
            "x_0": 3.577e-3,
            "y_0": -0.164e-3,
            "z_ct": 4.561291055e-3,
            "dx": 40.419e-3,
            "dy": 0.268e-3,
            "b_y": -0.400216e-3,
            "pre-tilt": 0.698132,  # Radians (40°).
            "use_linked_sem_focus_compensation": false,
        },
        # Active tilting (T/rx) & rotation (R/rz) angles positions when switching between SEM & FM.
        # Calibrate for each system, and make sure the difference in rz between FM and SEM is exactly 180°
        # The values are in radians. Please also update the values in degrees as written in the comments.
        # Note that the rz range in the TESCAN software is between -170° and 40°
        # Change the SEM tilt angle to a value that matches the customer's needs
        # Note that the accuracy of the FM/SEM switch might be reduced if starting at a different angle.
        FAV_FM_POS_ACTIVE: {"rx": 0.261799, "rz": 4.9567353}, # 15° tilt, 284° rotation
        FAV_SEM_POS_ACTIVE: {"rx": 0.698132, "rz": 1.815142}, # 40° tilt, 104° rotation
        # To compute the tilt angle: tilt = MillingAngle + PreTilt (40°) + ColumnTilt (55°) - 90
        FAV_MILL_POS_ACTIVE: { "mill_angle": 0.174532925, "rz": 1.815142 }, # Milling angle = 10°, 104° rotation
        # The value of the SEM imaging scan rotation, enforced when switching to MILLING & SEM IMAGING postures, and
        # used to derive and enforce the scan rotation for the other postures.
        SEM_IMAGING_SCAN_ROTATION: 3.141592653589,  # rad, 180°
    },
}

"Light Source": {
    class: omicronxx.HubxX,
    role: light,
    init: {
        port: "/dev/fakehub", # Simulator
        # port: "/dev/ttyFTDI*",
    },
    affects: ["Camera"],
}

"Optical Objective": {
    class: static.OpticalLens,
    role: lens,
    init: {
        mag: 50.0, # ratio, (actually of the complete light path)
        na: 0.5, # ratio, numerical aperture
        ri: 1.0, # ratio, refractive index
        wd: 10.6e-3,  # m, working distance
    },
    affects: ["Camera"],
}

# Axes: X is horizontal on screen (going left->right), physical: far->close when looking at the door
#       Y is vertical on screen (going bottom->top), physical: left->right when looking at the door
"Camera": {
    class: simcam.Camera,
    role: ccd,
    dependencies: {focus: "Optical Focus"},
    init: {
        image: "andorcam2-fake-clara.tiff",
        transp: [-1, 2], # To swap/invert axes
    },
    metadata: {
        # To change what the "good" focus position is on the simulator
        # It's needed for not using the initial value, which is at deactive position.
         FAV_POS_ACTIVE: {'z': 1.7e-3},  # good focus position
         ROTATION: -0.099484,  # [rad] (=-5.7°)
    },
}

# Controller for the filter-wheel
# DIP must be configured with address 7 (= 1110000)
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["fw", "stig"],
        ustepsize: [3.2724923e-4, 3.2724923e-4],  # [rad/µstep]
        rng: [[-28.0, 28.0], [-28.0, 28.0]],  # rad, more than 0->2 Pi, in order to allow one extra rotation in both direction, when quickly switching
        unit: ["rad", "rad"],
        refproc: "Standard",
        refswitch: {"fw": 0, "stig": 4}, # digital output used to switch on/off sensor
        inverted: ["fw"], # for the filter wheel, the direction doesn't matter, as long as the positions are correct
    },
}

"AntiBacklash Actuators": {
    class: actuator.AntiBacklashActuator,
    role: null,
    init: {
        backlash: {
            # Force every move to always finish in the same direction
            "fw": 50.e-3,  # rad
            "stig": 20.e-3,  # rad
        },
    },
    dependencies: {"slave": "Optical Actuators"},
}

"Filter Wheel": {
    class: actuator.FixedPositionsActuator,
    role: filter,
    dependencies: {"band": "AntiBacklash Actuators"},
    init: {
        axis_name: "fw",
        positions: {
             # pos (rad) -> m,m
             0.85: "pass-through", # Slot 1: always empty
             1.897197551: [414.e-9, 450.e-9], # Slot 2: FF01-432/36
             2.944395102: [500.e-9, 530.e-9], # Slot 3: FF01-515/30
             # 3.991592653: [0.e-9, 0.e-9], # Slot 4: Spare position for custom filter: specify the band(s) if a filter is present
             5.038790204: [579.5e-9, 610.5e-9], # Slot 5: FF01-595/31
             6.085987755: [663.e-9, 733.e-9], # Slot 6: FF02-698/70
        },
        cycle: 6.283185, # position of ref switch (0) after a full turn
    },
    affects: ["Camera"],
}

"Stigmator": {
    class: actuator.RotationActuator,
    role: stigmator,
    affects: ["Camera"],
    dependencies: {"rz": "AntiBacklash Actuators"},
    init: {
        axis_name: "stig",
        cycle: 6.283185, # rad
#        ref_start: null, # rad, value to where start the referencing, default is to start at 5% of cycle
        ref_frequency: null, # Disable auto referencing. Use a number (eg 5) to automatically reference after N moves
    },
    metadata: {
        POS_COR: -2.62486607383, # rad, adjustment needed for 0 = no astigmatism
        # SuperZ calibration
        CALIB: {
            200.e-9: {
                angle: 0.1309,
                x: {a: -0.011214230270591402, b: 0.03581851396840028, c: 1215.384506512626,  d: 370.0567109324832,  w0: 11.765876020198268},
                y: {a: 0.26798558796593386, b: 0.055348037953943205, c: 532.5800366796377,  d: 419.5479939702831, w0: 11.913803945482204},
                feature_angle: 1.3028,  # rad
                upsample_factor: 5,
                z_least_confusion: 8.746549309861972e-07,  # m
                z_calibration_range: [-8.746549309861972e-07, 7.625345069013803e-06]   # m
            }
        },
    },
}

# CLS3252dsc-1
"Optical Focus": {
    class: smaract.MCS2,
    role: focus,
    init: {
        locator: "fake",
        ref_on_init: True,
        # TODO: check speed/accel
        speed: 0.003,  # m/s
        accel: 0.003,  # m/s²
        #hold_time: 5 # s, default = infinite
        # TODO: check the ranges, and the channel
        axes: {
            'z': {
                # -11.5mm is safely parked (FAV_POS_DEACTIVE)
                # 1.7mm is typically in focus (FAV_POS_ACTIVE)
                range: [-15.e-3, 5.e-3],
                unit: 'm',
                channel: 0,
            },
        },
    },
    metadata: {
        # Loading position to retract lens
        FAV_POS_DEACTIVE: {'z': -11.5e-3},
        # Initial active position (close from the sample, but not too close, for safety)
        FAV_POS_ACTIVE: {'z': 1.69e-3},
    },
    affects: ["Camera"],
}

"SLM Lens Arm": {
    class: tmcm.TMCLController,
    role: "lens-arm-coincident",
    init: {
#        port: "/dev/ttyTMCM*",
#        address: 4,
        port: "/dev/fake6", # Simulator
        address: null, # Simulator
        axes: ["l", "s"],
        # ustepsize: [5.9e-9, 5.9e-9], # m/µstep
        ustepsize: [0.1e-6, 0.1e-6],
        refproc: "Standard",
        refswitch: {"l": 0, "s": 0},
        rng: [[-3.e-3, 125.5e-3],[-2.1e-3, 2.1e-3]],
    },
    metadata: {
        # Default position of the mirror engaged (will be improved during alignment)
        FAV_POS_ACTIVE: {"l": 122.2e-3, "s": 0},  # m, m
        FAV_POS_DEACTIVE:{"l":-2.5e-3, "s": 0},
    },
}

# SLM Optical path comp
"SLM Light Source": {
    class: omicronxx.HubxX,
    role: light-coincident,
    init: {
        port: "/dev/fakehub", # Simulator
        #port: "/dev/ttyFTDI*",
        },
    affects: ["SLM Camera"],
}

"SLM Optical Objective": {
    class: static.OpticalLens,
    role: lens-coincident,
    init: {
        mag: 100.0, # ratio, (actually of the complete light path)
        na: 0.85, # ratio, numerical aperture
        ri: 1.0, # ratio, refractive index
    },
    metadata: {
        # Refractive index mismatch correction factor
        RIM_COR : 0.495,  # generally for 50x lens use 0.495, 100x0.9 na use 0.6
    },
    affects: ["SLM Camera"]
}

# Normally a IDS uEye or Zyla
# Axes: X is horizontal on screen (going left->right), physical: far->close when looking at the door
#       Y is vertical on screen (going bottom->top), physical: left->right when looking at the door
"SLM Camera": {
    class: simcam.Camera,
    role: ccd-coincident,
    dependencies: {focus: "SLM Optical Focus"},
    init: {
        image: "andorcam2-fake-clara.tiff",
        transp: [-1, 2], # To swap/invert axes
    },
    metadata: {
        # To change what the "good" focus position is on the simulator
        # It's needed for not using the initial value, which is at deactive position.
         FAV_POS_ACTIVE: {'z': 1.7e-3},  # good focus position
         ROTATION: 0,  # [rad] (=0°)
    },
}

# Controller for the filter-wheel
# DIP must be configured with address 7 (= 1110000)
"SLM Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    init: {
        port: "/dev/fake6", # Simulator
        address: null, # Simulator
        axes: ["fw"],
        ustepsize: [1.227184e-3], # [rad/µstep]  fake value for simulator
        rng: [[-14, 7]], # rad, more than 0->2 Pi, in order to allow one extra rotation in both direction, when quickly switching
        unit: ["rad"],
        refproc: "Standard",
        refswitch: {"fw": 0}, #digital output used to switch on/off sensor
        inverted: ["fw"], # for the filter wheel, the direction doesn't matter, as long as the positions are correct
    },
}

"SLM AntiBacklash for Filter Wheel": {
    class: actuator.AntiBacklashActuator,
    role: null,
    init: {
        backlash: {
            # Force every move to always finish in the same direction
            "fw": 50.e-3,  # rad
        },
    },
    dependencies: {"slave": "SLM Optical Actuators"},
}

"SLM Filter Wheel": {
    class: actuator.FixedPositionsActuator,
    role: filter-coincident,
    dependencies: {"band": "SLM AntiBacklash for Filter Wheel"},
    init: {
        axis_name: "fw",
        # This filter-wheel is made so that the light goes through two "holes":
        # the filter, and the opposite hole (left empty). So although it has 8
        # holes, it only supports 4 filters (from 0° to 135°), and there is no
        # "fast-path" between the last filter and the first one.
        positions: {
             # pos (rad) -> m,m
             0.08: [414.e-9, 450.e-9], # FF01-432/36
             0.865398: [500.e-9, 530.e-9], # FF01-515/30
#             1.650796: [579.5e-9, 610.5e-9], # FF01-595/31
#             2.4361944: [663.e-9, 733.e-9], # FF02-698/70
        },
        cycle: 6.283185, # position of ref switch (0) after a full turn
    },
    affects: ["SLM Camera"],
}

# CLS3252dsc-1
"SLM Optical Focus": {
    class: smaract.MCS2,
    role: focus-coincident,
    init: {
        locator: "fake",
        ref_on_init: True,
        speed: 0.003,  # m/s
        accel: 0.003,  # m/s²
        #hold_time: 5 # s, default = infinite
        axes: {
            'z': {
                # -11.5mm is safely parked (FAV_POS_DEACTIVE)
                # 1.7mm is typically in focus (FAV_POS_ACTIVE)
                range: [-11.e-3, 15.e-3],
                unit: 'm',
                channel: 0,
            },
        },
    },
    metadata: {
        # Loading position to retract lens
        FAV_POS_DEACTIVE: {'z': -10.5e-3},
        # Initial active position (close from the sample, but not too close, for safety)
        FAV_POS_ACTIVE: {'z': 9.0e-3}
    },
    affects: ["SLM Camera"],
}

# Internal wrapper exposing lens-arm long axis and objective focus z as a
# 2-axis stage for Y/Z linking.
"SLM LZ Axes": {
    class: actuator.MultiplexActuator,
    role: null,
    dependencies: {
        "l": "SLM Lens Arm",
        "z": "SLM Optical Focus",
    },
    init: {
        axes_map: {
            "l": "l",
            "z": "z",
        },
    },
}

"SLM LZ Forced Order": {
    class: actuator.ForcedOrderActuator,
    role: null,
    dependencies: {"slave": "SLM LZ Axes"},
    init: {
        forced_axes: {
            # Only the sign matters: positive direction moves last.
            "l": -1,
            "z": -1,
        },
    },
}

"Linked LZ": {
    class: actuator.ConvertStage,
    role: null,
    dependencies: {
        "under": "SLM LZ Forced Order",
    },
    init: {
      axes: [ "l", "z" ], # combines lens-arm l and objective z into linked Y transform
        shear: [0, -1], # (0, -1/tan(45°))
        scale: [-1.4142135623730951, -1], # (-1/sin(45°), -1)
    },
    }

"SLM Alignment Stage": {
    class: actuator.MultiplexActuator,
    role: align-coincident,
    dependencies: {
        "x": "SLM Lens Arm",
        "y": "Linked LZ",
        "z": "Linked LZ",
    },
    init: {
        axes_map: {
            "x": "s", # direct mapping (negated via inverted below)
            "y": "x", # linked combination of lens-arm l and objective z
            "z": "y", # linked combination of lens-arm l and objective z
        },
        inverted: ["x"],  # align.x = -s (negated mapping)
    },
    affects: ["SLM Camera"],
    metadata: {
        POS_ACTIVE_RANGE: {"x": [-2.1e-3, 2.1e-3], "y": [-100, 100], "z": [-10.e-3, 15.e-3]}
    },
}

