# Configuration for the SPARC v2 Compact with a spectrometer (connected via optical fiber from the plate 2)
SPARC2: {
    class: Microscope,
    role: sparc2,
    children: ["SEM E-beam", "SEM Detector", "Optical Path Properties",
               "Lens1 Mover", "Lens2 Switch", "Calibration Light",
               "Spectrometer Selector", "Fiber align",
               "Calibration Camera",
               "External Spectrograph", "Spec CCD Flipper", "Spectrograph focus",
               "Spectral Camera", "Spectrometer",
               "Mirror Actuators", "Mirror Actuators in XY referential",
               ],
}

# Light (lamp with known spectrum)
"Calibration Light": {
    class: light.Light,
    role: brightlight,
    power_supplier: "Power Control Unit",
    affects: ["Spectral Camera", "Spectrometer", "Calibration Camera"],
}

"Power Control Unit": {
    class: powerctrl.PowerControlUnit,
    role: "power-control",
    init: {
#        port: "/dev/ttyPMT*",
        port: "/dev/fake", # for simulator
        pin_map: {"Calibration Light": 0,
                  "Optical Actuators": 2},
        delay: { # Time it takes before a component is accessible
            "Calibration Light": 0, # To turn on/off the light, it's immediate
            "Optical Actuators": 1,
        },
        init: { # Which component to power on from the very beginning (to save time)
            "Optical Actuators": True
        },
    }
}

# # Can simulate a SEM connected to a DAQ board by using the comedi_test driver:
# # sudo modprobe comedi comedi_num_legacy_minors=4
# # sudo modprobe comedi_test
# # sudo comedi_config /dev/comedi0 comedi_test 1000000,1000000
# "SEM Scan Interface": {
#     class: semcomedi.SEMComedi,
#     role: null,
#     init: {device: "/dev/comedi0"},
#     # more detectors can be added, if necessary
#     children: {
#        scanner: "SEM E-beam",
#        detector0: "SEM Detector",
#     }
# }
# 
# # Connect:
# # X -> AO 0
# # Y -> AO 1
# # Ground -> AO GND
# "SEM E-beam": {
#     # Internal child of SEM ExtXY, so no class
#     role: e-beam,
#     init: {
#         channels: [1, 0],
#         limits: [[0, 5], [0, 5]],  # V
#         park: [0, 0], # V
#         settle_time: 5.e-6, # s
#         hfw_nomag: 0.25, # m
#     },
#     properties: {
#         scale: [8, 8], # (ratio) : start with a pretty fast scan
#         dwellTime: 10.e-6, # s
#         magnification: 100, # (ratio)
#     },
#     affects: ["SEM Detector", "Spectral Camera", "Spectrometer", "Calibration Camera"] # affects the CCD in case of cathodoluminescence
# }
# 
# # Must be connected on AI 0/AI GND
# "SEM Detector": { # aka ETD
#     # Internal child of SEM Scan Interface, so no class
#     role: se-detector,
#     init: {
#         channel: 0, # 0-> sawtooth waves, 1-> square waves
#         limits: [-3, 3] # V
#     },
# }

# This is a more realistic SEM simulator (image-wise, but less realistic HW-wise)
"SEM Scan Interface": {
    class: simsem.SimSEM,
    role: none,
    init: {
           drift_period: 5, # s  (disable to get a the whole resolution of the image)
           image: "sparc-etd-gold-balls.h5",
    },
    # more detectors can be added, if necessary
    children: {scanner: "SEM E-beam",
               detector0: "SEM Detector"
    }
}

"SEM E-beam": {
    # Internal child of SimSEM, so no class
    role: e-beam,
    init: {},
    properties: {
        dwellTime: 10.e-6, # s
    },
    affects: ["SEM Detector", "Spectral Camera", "Spectrometer", "Calibration Camera"]
}

"SEM Detector": { # aka ETD
    # Internal child of SimSEM, so no class
    role: se-detector,
    init: {},
}

# # In reality, this is a IDS uEye
# "Calibration Camera": {
#     class: ueye.Camera,
#     role: ccd, # TODO: calib-ccd
#     init: {
#        device: null, # Any one found will do 
#     },
# }

# For simulation, we use this component
"Calibration Camera": {
    class: andorcam2.AndorCam2,
    role: ccd, # TODO: ccd (without pole position) or calib-ccd?
    init: {
       device: "fake",
       image: "sparc-ar-mirror-align.h5", # only for simulator
    },
}


# Spectrometer = Andor iVac + Shamrock SR193 (connected via USB)
"Spectrometer": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer,
    children: {detector: "Spectral Camera", spectrograph: "External Spectrograph"},
    init: {
        transp: [1, 2], # only applied to the spectrometer data (not raw CCD)
    },
    properties: {
        #binning: [4, 16],
    },
}

# Dedicated camera for the acquisition of the spectra
"Spectral Camera": {
    class: andorcam2.AndorCam2,
    role: sp-ccd,
    init: {
        #device: 0,
        device: "fake",
        transp: [-1, 2], # if mirrored on X axis
    },
    properties: {
        targetTemperature: -60, # °C
    },
}

"External Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph, # TODO: or spectrograph-dedicated ?
    init: {
        device: "fake",
        slits: {1: "slit-in", # INPUT_SIDE
        },
        # TODO: only if there are filters
#         bands: { # The filters in the filter-wheel
#             6: "pass-through"
#         },
        fstepsize: 10.9e-6, # m, size of one focus step
    },
    affects: ["Spectral Camera", "Spectrometer"],
}

"Spectrograph focus": {
    class: actuator.MultiplexActuator,
    role: "focus",
    children: {"z": "External Spectrograph"},
    init: {
        axes_map: {"z": "focus"},
    },
    affects: ["Spectral Camera", "Spectrometer"],
}

# Provide the mirror (aka port selector) of the spectrograph as a separate component
# Only used to disable the CCD, to perform basic background subtraction
"Spec CCD Flipper": {
    class: actuator.FixedPositionsActuator,
    role: "spec-det-selector",
    children: {"rx": "External Spectrograph"},
    init: {
        axis_name: "flip-out",
        positions: {
            0: ["Spectral Camera", "Spectrometer"],
            1.5707963267948966: [],   # nothing connected
        },
    },
    affects: ["Spectral Camera", "Spectrometer"],
}

"Optical Path Properties": {
    class: static.OpticalLens,
    role: lens,
    # Standard mirror config
    init: {
       mag: 0.31, # ratio
       na: 0.2, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
       # no pole_pos indicates it's not possible to do AR acquisition
       x_max: 13.25e-3,  # m, the distance between the parabola origin and the cutoff position
       hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
       focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
       parabola_f: 2.5e-3,  # m, parabola_parameter=1/4f
       rotation: -1.570796326795, # rad, 90° rotation between optical axis and SEM Y axis
    },
    affects: ["Spectral Camera", "Spectrometer", "Calibration Camera"]
}

# Controller for the motors moving the various parts of the optical box
# DIP must be configured with address 2 (= 0100000)
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        #port: "/dev/ttyTMCM*",
        port: "/dev/fake6",
        #address: 2,
        address: null,
        axes: ["l1", "l2", "spec-sel", "fiby"],
        # These values are adapted to make the simulator roughly the same speed
        ustepsize: [25.1e-9, 25.1e-9, 26.1e-9, 5.86e-9], # m/µstep
        refproc: "Standard",
        refswitch: {"l1": 0, "l2": 0, "spec-sel": 4, "fiby": 4},
        inverted: ["l2"],
    },
}

# The first lens of Plate 1, able to move along the whole range
"Lens1 Mover": {
    class: actuator.MultiplexActuator,
    role: "lens-mover",
    children: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l1"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": -0.0045} # m
    },
    affects: ["Spectral Camera", "Spectrometer", "Calibration Camera"],
}

# The second lens of Plate 1, either to working or parking position
"Lens2 Switch": {
    class: actuator.FixedPositionsActuator,
    role: "lens-switch",
    children: {"x": "Optical Actuators"},
    init: {
        axis_name: "l2",
        positions: {
            -4.e-3: "on",
            -0.02: "off", # completely out of the path
        },
    },
    affects: ["Spectral Camera", "Spectrometer", "Calibration Camera"],
}

# Note that the next two components actually move the _same_ axis!
# Mirror & Lens in Plate 2, to change X&Y of fiber alignment
"Fiber align": {
    class: actuator.MultiplexActuator,
    role: "fiber-aligner",
    children: {"x": "Optical Actuators", "y": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel", "y": "fiby"},
    },
    affects: ["Spectral Camera", "Spectrometer"],
}

# Mirror in Plate 2, selects between integrated spectrometer and external spectrometer
"Spectrometer Selector": {
    class: actuator.MultiplexActuator,
    role: "spec-selector",
    children: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Position of the mirror to select the external spectrometer (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.026112848}, # m
        FAV_POS_ACTIVE_DEST: ["Fiber align", "Spec CCD Flipper", "Spectral Camera", "Spectrometer"],
        FAV_POS_DEACTIVE: {"x": 0.022}, # m
        FAV_POS_DEACTIVE_DEST: ["Calibration Camera"], # m
    },
    affects: ["Spectral Camera", "Spectrometer", "Calibration Camera"],
}

# Controller for moving the 'Redux' stage
# Note: the S axis can _only_ be moved when the l axis is near the active/engaged position
"Mirror Actuators": {
    class: tmcm.TMCLController,
    role: "mirror",
    init: {
        port: "/dev/fake6",
        address: null,
        #port: "/dev/ttyTMCM*",
        #address: 4,
        axes: ["s", "l"],
        ustepsize: [1.e-6, 1.e-6], # m/µstep (big, for the simulator to move fast)
        refproc: "Standard",
        refswitch: {"s": 0, "l": 0},
    },
    metadata: {
        # Default position of the mirror engaged (will be improved during alignment)
        FAV_POS_ACTIVE: {"l": 70.e-3, "s": 5.e-3},  # m, m
    },
}

# Internal component to convert between the referential of the mirror actuators
# and the X/Y referential of the SEM. Used by the mirror alignment functions.
"Mirror Actuators in XY referential": {
    class: actuator.ConvertStage,
    role: "mirror-xy",
    children: {"orig": "Mirror Actuators"},
    init: {
        axes: ["l", "s"], # mapped respectively to X, Y
        rotation: -1.0471975511965976, # rad (= 60°)
        # Note: if you want to use absolute moves, add a "translation" too
    },
}

