# Configuration for a simulated SPARC v2 system with a FPLM (Fiber-coupled PhotoLuminescence Module)
"SPARCv2 FPLM": {
    class: Microscope,
    role: sparc2,
}

# Light (lamp with known spectrum)
"Calibration Light": {
    class: light.Light,
    role: brightlight,
    power_supplier: "Power Control Unit",
    affects: ["Camera", "Spectral Camera", "Spectrometer Vis-NIR", "Spectrometer IR"],
}

# Input laser controlled via a DAQ MCC device
"External Laser": {
    class: pwrmccdaq.MCCDeviceLight,
    role: light,
    init: {
        mcc_device: "fake",
        ao_channels: [0],
        do_channels: [6],
        # 99% low, 25% low, centre, 25% high, 99% high wavelength in m
        spectra: [[527.e-9, 531.e-9, 532.e-9, 533.e-9, 537.e-9]],
        # Relation curve of voltage -> power, as linear segments
        pwr_curve: [
            {
                # Voltage should be 0->5V, with max power specified as 100mW
                0: 0, # V -> W
                5: 0.1, # 100mW
            },
        ],
        # di_channels port B 8-15 -> pin 32-39
        # specified as [name, TLL_HIGH]
        # In the simulator, port 6 is connected to port 14, so when the power is 0V,
        # the interlock will be considered set (=True), and when power > 0, the interlock will
        # be considered reset (=False)
        di_channels: {14: ["interlockTriggered", False]},
    },
    children: {
        actuator: "ND Filter",
    },
    affects: ["Camera", "Spectral Camera", "Spectrometer Vis-NIR", "Spectrometer IR"],
}

"ND Filter": {
    role: light-protector,
    init: {
        axes: {
            "rz": {
                "do": 3,       # Port A, 0-7 -> pin 21-28, GND = pin 29
                "low": 1.5707963267948966,
                # filter is active when the pin is high
                # this is considered as a safe state because if the MCC device is unplugged,
                # the do pin goes to high given the pull-up resistor
                "high": 0.0,
                "unit": "rad",
                "duration": 0.5,
                "di": 11,       # Port B, 8-15 -> pin 32-39. GND = pin 31
                "di_inverted": False,
                "positions": {
                    0.0: "on",
                    1.5707963267948966: "off",
                },
            },
        },
    },
}

"Power Control Unit": {
    class: powerctrl.PowerControlUnit,
    role: "power-control",
    init: {
        port: "/dev/fake", # for simulator
        pin_map: {
            "Calibration Light": 0,
            "Camera": 4,
            "Spectral Camera": 5,
            "Spectrograph": 6,
            "Optical Actuators": 2
        },
        delay: { # Time it takes before a component is accessible
            "Calibration Light": 0, # To turn on/off the light, it's immediate
            "Camera": 1,
            "Spectral Camera": 1,
            "Spectrograph": 3,
            "Optical Actuators": 1
        },
        init: { # Which component to power on from the very beginning (to save time)
            "Camera": True,
            "Spectral Camera": True,
            "Spectrograph": True,
            "Optical Actuators": True
        },
        termination: { # Which component to power off (or on) at the end
            "Calibration Light": False, # make sure it's turned off
            "Spectrograph": False,
        },
    }
}

# Can simulate a SEM connected to a DAQ board by using the comedi_test driver:
# sudo modprobe comedi comedi_num_legacy_minors=4
# sudo modprobe comedi_test
# sudo comedi_config /dev/comedi0 comedi_test 1000000,1000000
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: null,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {
       scanner: "SEM E-beam",
       detector0: "SEM Detector",
    }
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM Scan Interface, so no class
    role: e-beam,
    init: {
        channels: [1, 0],
        limits: [[0, 5], [0, 5]],  # V
        park: [0, 0], # V
        settle_time: 5.e-6, # s
        scan_active_delay: 0.5, # s
        hfw_nomag: 0.25, # m
        # output ports -> True (high when scanning) or False (high when parked)
        # + property name + True (high when set to True) or False (high when set to False)
        scanning_ttl: {
            4: True,
            2: [True, "external"],
            3: [False, "blanker", True]
        },
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio)
    },
    affects: ["SEM Detector", "Spectrometer Vis-NIR", "Spectrometer IR", "Camera", "Spectral Camera", "EBIC"]
}

"SEM Detector": { # aka ETD
    # Internal child of SEM Scan Interface, so no class
    role: se-detector,
    init: {
        channel: 0, # 0-> sawtooth waves, 1-> square waves
        limits: [-3, 3] # V
    },
}

# A detector which is independent from the DAQ board. Though in reality, it's
# synchronized on the newPixel TTL signal of the DAQ board scanner.
"EBIC": {
    class: simsem.IndependentDetector,
    role: ebic-detector,
    init: {
#        image: "",
    },
}

"Scan Stage": { # wrapper to be able to scan with the stage instead of the e-beam
    class: actuator.MultiplexActuator,
    role: scan-stage,
    dependencies: {"x": "Sample Stage", "y": "Sample Stage"},
    init: {
        axes_map: {"x": "x", "y": "y"},
    },
    affects: ["Sample Stage"],
}

"Sample Stage": {
    class: simulated.Stage,
    role: stage,
    init: {
        axes: ["x", "y"],
        ranges: {"x": [-0.014, 0.014], "y": [-0.028, 0.028]},
    },
    properties: {
        speed: {"x": 0.01, "y": 0.01}, # m/s
    },
    affects: ["SEM E-beam"],
}

# Depending exactly on the configuration, it might also be used for spectrometer
"Camera": {
    class: andorcam2.AndorCam2,
    role: ccd,
    power_supplier: "Power Control Unit",
    init: {
      device: "fake",
      image: "sparc-ar.h5", # only for simulator
      transp: [1, -2],
    },
}

"Spectrometer Vis-NIR": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer-integrated,
    dependencies: {detector: "Camera", spectrograph: "Spectrograph"},
    init: {
        transp: [1, -2], # only applied to the spectrometer data (not raw CCD)
    },
}

# On some configuration, there is a dedicated camera for the acquisition of the
# spectra, otherwise 'Camera' is used.
"Spectral Camera": {
    class: andorcam2.AndorCam2,
    role: sp-ccd,
    power_supplier: "Power Control Unit",
    init: {
        device: "fake",
        transp: [-1, 2], # if mirrored on X axis
        image: "sparc-spec-sim.h5", # only for simulator
    },
    properties: {
        targetTemperature: -60, # °C
    },
}

"Spectrometer IR": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer,
    dependencies: {detector: "Spectral Camera", spectrograph: "Spectrograph"},
    properties: {
        binning: [4, 100],
    },
}

"Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph,
    power_supplier: "Power Control Unit",
    init: {
        device: "fake",
        slits: {1: "slit-in", # INPUT_SIDE
        },
        bands: { # The filters in the filter-wheel
            1: [320.e-9, 400.e-9], # pos -> m,m
            2: [500.e-9, 550.e-9],
            3: [400.e-9, 450.e-9],
            4: [450.e-9, 500.e-9],
            6: "pass-through"
        },
        fstepsize: 10.9e-6, # m, size of one focus step
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Spectral Camera", "Spectrometer IR"],
}

"Spectrograph focus": {
    class: actuator.MultiplexActuator,
    role: "focus",
    dependencies: {"z": "Spectrograph"},
    init: {
        axes_map: {"z": "focus"},
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Spectral Camera", "Spectrometer IR"],
}

# Provide the mirror (aka port selector) of the spectrograph as a separate component
"Spec CCD Flipper": {
    class: actuator.FixedPositionsActuator,
    role: "spec-det-selector",
    dependencies: {"rx": "Spectrograph"},
    init: {
        axis_name: "flip-out",
        positions: {
            0: ["Camera", "Spectrometer Vis-NIR"],
            1.5707963267948966: ["Spectral Camera", "Spectrometer IR"],
        },
    },
    affects: ["Camera", "Spectral Camera", "Spectrometer Vis-NIR", "Spectrometer IR"],
}

# Provide the filter wheel of the spectrograph as a separate component
"Spec Filter Wheel": {
    class: actuator.MultiplexActuator,
    role: filter,
    dependencies: {"band": "Spectrograph"},
    init: {
        axes_map: {"band": "band"},
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Spectral Camera", "Spectrometer IR"],
}

"Optical Path Properties": {
    class: static.OpticalLens,
    role: lens,
    # Standard mirror config
    init: {
       mag: 0.31, # ratio
       na: 0.2, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
       pole_pos: [458, 519], # (px, px), position of the pole (aka the hole in the mirror)
       x_max: 13.25e-3,  # m, the distance between the parabola origin and the cutoff position
       hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
       focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
       parabola_f: 2.5e-3,  # m, parabola_parameter=1/4f
       rotation: 0, # rad, 0° rotation between optical axis and SEM Y axis
    },
    persistent: {
        properties: [polePosition],
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Spectral Camera", "Spectrometer IR"],
}

# Controller for the motors moving the various parts of the optical box
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["l1", "l2", "inz", "inx", "slit"],
        # These values only need to be roughly correct
        ustepsize: [25.1e-9, 25.1e-9, 5.86e-9, 25.1e-9, 5.e-9], # m/µstep
        unit: ["m", "m", "m", "m", "m"],
        rng: [[0, 100.e-3], [-1.e-3, 100.e-3], [-10.e-3, 2.e-3], [0, 18.e-3], [0, 2.e-3]],
        refproc: "Standard",
        refswitch: {"l1": 0, "l2": 0, "inx": 4, "inz": 4},
        inverted: ["l2", "inz"],
        # +inx should move the same direction as +l1 and +l2: towards the back
        # +inz should go further away from the light source
    },
}

# The first lens of Plate 1, able to move along the whole range
"Lens1 Mover": {
    class: actuator.MultiplexActuator,
    role: "lens-mover",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l1"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.0045} # m
    },
    affects: ["Lens2 Switch"],
}

# The second lens of Plate 1, either to working or parking position
"Lens2 Switch": {
    class: actuator.MultiplexActuator,
    role: "lens-switch",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l2"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Position away
        FAV_POS_DEACTIVE: {"x": -0.02}, # m
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": -4.0e-3}, # m
        POS_ACTIVE_RANGE: {"x": [-1.e-3, 1.e-3]},  # relative min/max from the active position when doing EK-scanning
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Spectral Camera", "Spectrometer IR"],
}

# Control the slit position to either fully-open or small (dependent on the spectrometer slit-in)
"Slit": {
    class: actuator.FixedPositionsActuator,
    role: "slit-in-big",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axis_name: "slit",
        positions: {
            0: "on", # fully opened
            0.0012: "off", # opening based on the small slit
        },
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Spectral Camera", "Spectrometer IR"],
}

"In-Light Aligner": {
    class: actuator.MultiplexActuator,
    role: "light-aligner",
    dependencies: {"x": "Optical Actuators", "z": "Optical Actuators"},
    init: {
        axes_map: {"x": "inx", "z": "inz"},
        ref_on_init: ["x", "z"],
        },
    metadata: {
        # Default position of the mirror and the focus (can be improved by user)
        FAV_POS_ACTIVE: {"x": 2.0e-3, "z": 1.0e-3}, # m
    },
    affects: ["Mirror Actuators", "Spec CCD Flipper"],  # Affects the parabolic mirror, to indicate it's a PL module
}

# Controller for moving the 'Redux' stage
# Note: the S axis can _only_ be moved when the l axis is near the active/engaged position
"Mirror Actuators": {
    class: tmcm.TMCLController,
    role: "mirror",
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["s", "l"],
        ustepsize: [1.e-6, 1.e-6], # m/µstep (big, for the simulator to move fast)
        rng: [[-1.1e-3, 1.1e-3], [0, 51.e-3]],  # m, min/max
        refproc: "Standard",
        refswitch: {"s": 0, "l": 0},
    },
    metadata: {
        # Default position of the mirror engaged (will be improved during alignment)
        FAV_POS_ACTIVE: {"l": 48.e-3, "s": 1.e-3},  # m, m
    },
    persistent: {
        metadata: [FAV_POS_ACTIVE],
    },
}

# Internal component to convert between the referential of the mirror actuators
# and the X/Y referential of the SEM. Used by the mirror alignment functions.
"Mirror Actuators in XY referential": {
    class: actuator.ConvertStage,
    role: "mirror-xy",
    dependencies: {"orig": "Mirror Actuators"},
    init: {
        axes: ["l", "s"], # mapped respectively to X, Y
        rotation: -1.0471975511965976, # rad (= 60°)
    },
}

