# Configuration for a simulated SPARC v2 system, using the NIDAQmx simulator for the DAQ board
# Similar to sparc2-nidaq-sim, but with a scan stage and *without* hardware synchronization SEM scanner -> CCD.
"SPARCv2 NIDAQmx": {
    class: Microscope,
    role: sparc2,
}

# Light (lamp with known spectrum)
"Calibration Light": {
    class: light.Light,
    role: brightlight,
    power_supplier: "Power Control Unit",
    affects: ["Camera", "Spectrometer Vis-NIR", "Monochromator"],
}

"Power Control Unit": {
    class: powerctrl.PowerControlUnit,
    role: power-control,
    init: {
        port: "/dev/fake", # for simulator
        pin_map: {
            "Calibration Light": 0,
            "CL PMT control unit": 3,
            "Camera": 4,
            "Spectrograph": 6,
            "Optical Actuators": 2
        },
        delay: { # Time it takes before a component is accessible
            "Calibration Light": 0, # To turn on/off the light, it's immediate
            "CL PMT control unit": 0,
            "Camera": 2,
            "Spectrograph": 2,
            "Optical Actuators": 1
        },
        init: { # Which component to power on from the very beginning (to save time)
            "Camera": True,
            "Spectrograph": True,
            "Optical Actuators": True
        },
        termination: { # Which component to power off (or on) at the end
            "Calibration Light": False, # make sure it's turned off
            "Spectrograph": False,
        },
    }
}

# Can simulate a SEM connected to a DAQ board by using the simulated NI card.
# The main steps required to install the driver are:
# sudo apt install ni-ubuntu2204-drivers-stream.deb
# sudo apt install ni-daqmx
# sudo pip3 install nidaqmx
# nidaqmxconfig --import ni-pci6361-sim.nce --replace
"SEM Scan Interface": {
    class: semnidaq.AnalogSEM,
    role: null,
    init: {
        device: "Dev1",  # see nilsdev output
        multi_detector_min_period: 1.e-6,  # s, to limit sampling frequency when acquiring with multiple detector (and reduce cross-talk)
    },
    # more detectors can be added, if necessary
    children: {
       scanner: "SEM E-beam",
       detector0: "SEM Detector",
       detector1: "CL PMT",
       counter0: "Monochromator",
    },
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    role: e-beam,
    init: {
        channels: [1, 0],
        limits: [[-2.8, 2.8], [4.0, -4.0]],  # V
        park: [-3.0, -4.5], # V
        max_res: [6144, 4096],  # px, to force the same ratio as the SEM (3/2)
        settle_time: 100.e-6,  # s
        scan_active_delay: 0.01,  # s, time to wait before starting a new acquisition
        hfw_nomag: 0.4,  # m
        # scanning_ttl = output ports -> [high_auto, high_enabled, prop_name]
        # * high_auto: True = high when scanning, False = high when parked
        # * high_enabled: True = high when property set to True, False = high when set to False
        # * prop_name: name of the property to control it (null to not show any property)
        # Digital output port mapping on the Delmic scanning box v2:
        # 0 = Relay
        # 1 = Open drain output (Y0.0)
        # 2 = Digital Out 1
        # 3 = Digital Out 0
        # 4 = Status led
        scanning_ttl: {
            4: [True, True, null],
            2: [True, True, "external"],  # High when scanning, High when VA set to True
            3: [False, True, "blanker"],  # Low when scanning, High when VA set to True
        },
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio)
    },
    affects: ["SEM Detector", "Spectrometer Vis-NIR", "Camera", "Monochromator"] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SEM Detector": { # aka ETD
    role: se-detector,
    init: {
        # Can also use "ao0" and "ao1" to loopback from the AO0/1, for testing
        channel: 0,
        limits: [-3, 3] # V
    },
}

# CL PMT: composed of the control unit + the PMT output connected to the DAQ board

# Must be connected on AI 1/AI GND
"CL PMT": { # the raw detector of the PMT
    role: null,
    init: {
        channel: 1,
        limits: [3, 0], # V, with contrast reversed
    },
}

# This is the counting PMT, which is situated after the spectrograph, to be used as monochromator
"Monochromator": {
    role: monochromator,
    init: {
        source: 8,  # PFI number
    },
}

"CL PMT control unit": {
    class: pmtctrl.PMTControl,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        port: "/dev/fake", # for simulator
        prot_time: 0.0002,  # s
        prot_curr: 50.e-6,  # A
    }
}

"CL Detector": {
    class: pmtctrl.PMT,
    role: cl-detector,
    init: {
        settle_time: 0.1, # s, time to wait before detector is ready
    },
    dependencies: {
       "detector": "CL PMT",
       "pmt-control": "CL PMT control unit",
    },
}

"Scan Stage": { # wrapper to be able to scan with the stage instead of the e-beam
    class: actuator.MultiplexActuator,
    role: scan-stage,
    dependencies: {"x": "Sample Stage", "y": "Sample Stage"},
    init: {
        axes_map: {"x": "x", "y": "y"},
    },
    affects: ["Sample Stage"],
}

"Sample Stage": {
    class: simulated.Stage,
    role: stage,
    init: {
        axes: ["x", "y"],
        ranges: {"x": [-0.014, 0.014], "y": [-0.028, 0.028]},
    },
    properties: {
        speed: {"x": 0.01, "y": 0.01}, # m/s
    },
    affects: ["SEM E-beam", "Camera"],
}

# Depending exactly on the configuration, it might also be used for spectrometer
"Camera": {
    class: andorcam2.AndorCam2,
    role: ccd,
    power_supplier: "Power Control Unit",
    init: {
      device: "fake",
      image: "sparc-ar.h5", # only for simulator
      transp: [1, 2],
    },
}

"Spectrometer Vis-NIR": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer,
    dependencies: {detector: "Camera", spectrograph: "Spectrograph"},
    init: {
        transp: [1, -2], # only applied to the spectrometer data (not raw CCD)
    },
}

"Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph,
    power_supplier: "Power Control Unit",
    init: {
        device: "fake",
        slits: {
            1: "slit-in", # INPUT_SIDE
            3: "slit-monochromator", # OUTPUT_SIDE
        },
        bands: { # The filters in the filter-wheel
            1: [320.e-9, 400.e-9], # pos -> m,m
            2: [500.e-9, 550.e-9],
            3: [400.e-9, 450.e-9],
            4: [550.e-9, 650.e-9],
            6: "pass-through"
        },
        slitleds_settle_time: 2, # s , time to wait to ensure the PMT is off
        fstepsize: 10.9e-6, # m, size of one focus step
    },
    # TODO: add led_prot for protecting the monochromator (Needs to provide a .protection VA)
    # To disable the monochromator when the spectrograph output slit moves
    # dependencies: {"led_prot": "Monochromator control"},
    affects: ["Camera", "Spectrometer Vis-NIR", "Monochromator"],
}

"Spectrograph focus": {
    class: actuator.MultiplexActuator,
    role: focus,
    dependencies: {"z": "Spectrograph"},
    init: {
        axes_map: {"z": "focus"},
    },
    affects: ["Camera", "Spectrometer Vis-NIR"],
}

# Provide the mirror (aka port selector) of the spectrograph as a separate component
"Spec CCD Flipper": {
    class: actuator.FixedPositionsActuator,
    role: spec-det-selector,
    dependencies: {"rx": "Spectrograph"},
    init: {
        axis_name: "flip-out",
        positions: {
            0: ["Camera", "Spectrometer Vis-NIR"],
            1.5707963267948966: ["Monochromator"],
        },
    },
    affects: ["Camera", "Spectrometer Vis-NIR"],
}

# Provide the filter wheel of the spectrograph as a separate component
"Spec Filter Wheel": {
    class: actuator.MultiplexActuator,
    role: filter,
    dependencies: {"band": "Spectrograph"},
    init: {
        axes_map: {"band": "band"},
    },
    affects: ["Camera", "Spectrometer Vis-NIR"],
}

"Optical Path Properties": {
    class: static.OpticalLens,
    role: lens,
    # Standard mirror config
    init: {
       mag: 0.31, # ratio
       na: 0.2, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
       pole_pos: [458, 519], # (px, px), position of the pole (aka the hole in the mirror)
       x_max: 13.25e-3,  # m, the distance between the parabola origin and the cutoff position
       hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
       focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
       parabola_f: 2.5e-3,  # m, parabola_parameter=1/4f
       rotation: -1.570796326795, # rad, 90° rotation between optical axis and SEM Y axis
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Monochromator"],
}

# Controller for the motors moving the various parts of the optical box
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["l1", "l2", "cl-sel", "fw", "slit"],
        # These values are adapted to make the simulator roughly the same speed
        ustepsize: [25.1e-8, 25.1e-8, 26.1e-8, 3.392e-4, 5.e-8], # m/µstep, excepted for the fw: rad/µstep (adjusted for the simulator)
        unit: ["m", "m", "m", "rad", "m"],
        refproc: "Standard",
        refswitch: {"l1": 0, "l2": 0, "cl-sel": 4, "fw": 4},
        inverted: ["l2"],
    },
}

# The first lens of Plate 1, able to move along the whole range
"Lens1 Mover": {
    class: actuator.MultiplexActuator,
    role: lens-mover,
    dependencies: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l1"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.0045} # m
    },
    affects: ["Lens2 Switch"],
}

# The second lens of Plate 1, either to working or parking position
"Lens2 Switch": {
    class: actuator.MultiplexActuator,
    role: lens-switch,
    dependencies: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l2"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Position away
        FAV_POS_DEACTIVE: {"x": 0.02}, # m
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": 4.0e-3}, # m
        POS_ACTIVE_RANGE: {"x": [-1.e-3, 1.e-3]},  # relative min/max from the active position when doing EK-scanning
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "CL Detector", "Monochromator"],
}

# Control the slit position to either fully-open or small (dependent on the spectrometer slit-in)
"Slit": {
    class: actuator.FixedPositionsActuator,
    role: slit-in-big,
    dependencies: {"x": "Optical Actuators"},
    init: {
        axis_name: "slit",
        positions: {
            0: "on", # fully opened
            -0.0012: "off", # opening based on the small slit
        },
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Monochromator"],
}

# Mirror in Plate 2, selects between spectrometer and cl-detector
"CL Selector": {
    class: actuator.FixedPositionsActuator,
    role: cl-det-selector,
    dependencies: {"x": "Optical Actuators"},
    init: {
        axis_name: "cl-sel",
        positions: {
            0.003: ["CL Detector"],
            0.01: ["Spec CCD Flipper"]
        },
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "CL Detector", "Monochromator"],
}

"CL Filter Wheel": {
    class: actuator.FixedPositionsActuator,
    role: cl-filter,
    dependencies: {"band": "Optical Actuators"},
    init: {
        axis_name: "fw",
        # It supports up to 8 filters
        positions: {
            # pos (rad) -> m,m
            0: [420.e-9, 460.e-9],        # 1
            0.785398: [500.e-9, 550.e-9], # 2
            1.570796: "polariser",        # 3
            3.9269908: "pass-through",    # 6
        },
        cycle: 6.283185, # position of ref switch (0) after a full turn
    },
    affects: ["CL Detector"],
}

# Controller for moving the 'Redux' stage
# Note: the S axis can _only_ be moved when the l axis is near the active/engaged position
"Mirror Actuators": {
    class: tmcm.TMCLController,
    role: mirror,
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["s", "l"],
        ustepsize: [1.e-6, 1.e-6], # m/µstep (big, for the simulator to move fast)
        rng: [[-1.e-3, 1.e-3], [0, 51.e-3]],  # m, min/max
        refproc: "Standard",
        refswitch: {"s": 0, "l": 0},
    },
    metadata: {
        # Default position of the mirror engaged (will be improved during alignment)
        FAV_POS_ACTIVE: {"l": 48.e-3, "s": 1.e-3},  # m, m
    },
    persistent: {
        metadata: [FAV_POS_ACTIVE],
    },
}

# Internal component to convert between the referential of the mirror actuators
# and the X/Y referential of the SEM. Used by the mirror alignment functions.
"Mirror Actuators in XY referential": {
    class: actuator.ConvertStage,
    role: mirror-xy,
    dependencies: {"orig": "Mirror Actuators"},
    init: {
        axes: ["l", "s"], # mapped respectively to X, Y
        rotation: -1.0471975511965976, # rad (= 60°)
        # Note: if you want to use absolute moves, add a "translation" too
    },
}
