# Configuration for a simulated SPARC v2 system
"SPARCv2 Streakcam": {
    class: Microscope,
    role: sparc2,
}

# Light (lamp with known spectrum)
"Calibration Light": {
    class: light.Light,
    role: "brightlight",
    power_supplier: "Power Control Unit",
    affects: ["Camera", "Spectrometer Vis-NIR"],
}

"Power Control Unit": {
    class: powerctrl.PowerControlUnit,
    role: "power-control",
    init: {
        port: "/dev/fake", # for simulator
        pin_map: {"Calibration Light": 0, "CL PMT control unit": 3,
                  "Camera": 4, "Spectrograph": 6,
                  "Optical Actuators": 2},
        delay: { # Time it takes before a component is accessible
            "Calibration Light": 3, # s, the light takes some time to actually turn on
            "CL PMT control unit": 0,
            "Camera": 1,
            "Spectrograph": 1,
            "Optical Actuators": 1
        },
        init: { # Which component to power on from the very beginning (to save time)
            "Camera": True,
            "Spectrograph": True,
            "Optical Actuators": True
        },
    }
}

# Can simulate a SEM connected to a DAQ board by using the comedi_test driver:
# sudo modprobe comedi comedi_num_legacy_minors=4
# sudo modprobe comedi_test
# sudo comedi_config /dev/comedi0 comedi_test 1000000,1000000
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: null,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {
       scanner: "SEM E-beam",
       detector0: "SEM Detector",
       detector1: "CL PMT",
       detector2: "EBIC",
    }
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        channels: [1, 0],
        limits: [[0, 5], [0, 5]],  # V
        park: [0, 0], # V
        settle_time: 5.e-6, # s
        hfw_nomag: 0.25, # m
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio)
    },
    affects: ["SEM Detector", "Camera", "EBIC"] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SEM Detector": { # aka ETD
    # Internal child of SEM Scan Interface, so no class
    role: se-detector,
    init: {
        channel: 0, # 0-> sawtooth waves, 1-> square waves
        limits: [-3, 3] # V
    },
}

# CL PMT: composed of the control unit + the PMT output connected to the DAQ board

# Must be connected on AI 1/AI GND
"CL PMT": { # the raw detector of the PMT
    # Internal child of SEM Scan Interface, so no class
    role: null,
    init: {
        channel: 1, # 0-> sawtooth waves, 1-> square waves
        limits: [3, 0], # V, with contrast reversed
    },
}

"CL PMT control unit": {
    class: pmtctrl.PMTControl,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        port: "/dev/fake", # for simulator
        prot_time: 0.0002,  # s
        prot_curr: 50.e-6,  # A
    }
}

"CL Detector": {
    class: pmtctrl.PMT,
    role: cl-detector,
    init: {
        settle_time: 0.1, # s, time to wait before detector is ready
    },
    dependencies: {
       "detector": "CL PMT",
       "pmt-control": "CL PMT control unit",
    },
}

# EBIC: In either configuration, the signal is either ±10V or ±5V. As the signal can be positive and negative, is uses the full range.
# Must be connected on AI 2/AI 10 (differential)
"EBIC": {
    # Internal child of SEM Scan Interface, so no class
    role: ebic-detector,
    init: {
        channel: 2,
        limits: [-10, 10], # V
    },
}

# In reality, this is a Zyla, but you need libandor3-dev to simulate an AndorCam3
# Depending exactly on the configuration, it might also be used for spectrometer
"Camera": {
    class: andorcam2.AndorCam2,
    role: ccd,
    power_supplier: "Power Control Unit",
    init: {
       device: "fake",
       image: "sparc-ar-mirror-align.h5", # only for simulator
    },
}

"Spectrometer Vis-NIR": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer,
    dependencies: {detector: "Camera", spectrograph: "Spectrograph"},
    init: {
        transp: [1, -2], # only applied to the spectrometer data (not raw CCD)
    },
}

"E-beam blanker pulse generator": {
    role: ebeam-blanker,
    class: keysight.TrueForm,
    init: {
        address: "fake",  # "fake" (to start the simulator) or an IP address
        channel: 1,
        limits: [[-4.0, 4.0], [-5.0, 5.0]],  # min/max (in V)
        tracking: {2: "INV"},
        off_voltage: [0.0, null],  # V, null = "output disabled"
    },
    affects: ["SEM E-beam", "Streak Readout CCD", "SEM Detector", "CL Detector", "EBIC"],
}

# Fake laser component, made of a laser and a interlock reader
"Exciter Laser": {
    class: simulated.GenericComponent,
    role: null,
    init: {
        vas: {
            "laserPower": {"value": 0.0, "unit": "W", "range": [0.0, 100.e-3]},
            "spectra": {"value": [358.e-9, 359.e-9, 360.e-9, 361.e-9, 362.e-9], "unit": "m", "readonly": True},
            "period": {"value": 1.e-6, "unit": "s", "readonly": True},
            "hwName": {"value": "Pulsed Laser Sim", "readonly": True},
             # Can also contain e-beam column config info
            "filamentCurrent": {"value": 1.050, "unit": "A"},
            "extractorVoltage": {"value": 5900, "unit": "V"},
            # Special option to change a series of values together
            "operation": {"value": "CW", "choices": ["CW", "Pulsed"]}
        },
    },
    persistent: {
        properties: ["filamentCurrent", "extractorVoltage"],
    },
    metadata: {
        CALIB: {
            # These defines the values depending on the operation.
            # The plugin gun_exciter_operation can be used to automatically load them
            # based on the operation selected.
            "operation": {
                "CW": {
                    "filamentCurrent": 2.030,
                    "extractorVoltage": 7200,
                },
                "Pulsed": {
                    "filamentCurrent": 1.050,
                    "extractorVoltage": 5900,
                },
            },
        },
    },
}

# Laser interlock reading via a DAQ MCC device
# Provides a "interlockTriggered" VA.
"Laser Interlock": {
    class: pwrmccdaq.MCCDevice,
    role: null,
    init: {
        mcc_device: "fake",
        # di_channels port B 8-15 -> pin 32-39
        # specified as [name, TTL_HIGH]
        di_channels: {14: ["interlockTriggered", False]},
    },
}

# Simpler simulator, which provides the interlockTriggered VA, read & write,
# to easily test software reaction to a change.
#"Laser Interlock": {
#    class: simulated.GenericComponent,
#    role: null,
#    init: {
#        vas: {
#            "interlockTriggered": {"value": False},
#        },
#    },
#}

# Merge the two components
"Ebeam Gun Exciter": {
    class: compositer.CompositedComponent,
    role: ebeam-gun-exciter,
    dependencies: {  # sorted following the "internal roles" alphabetical order
        "dep0": "Exciter Laser",
        "dep1": "Laser Interlock",
    },
    affects: ["SEM E-beam", "Streak Readout CCD", "SEM Detector", "CL Detector", "EBIC"],
}

# simple simulated streak camera
"Streak Camera": {
    class: simstreakcam.StreakCamera,
    role: streak-cam,
    init: {
    },
    children: {
        readoutcam: "Streak Readout CCD",
        delaybox: "Streak Delay Generator",
        streakunit: "Streak Unit"
    },
    dependencies: {
        spectrograph: "Spectrograph"
    },
}

# for testing with real HW
#"Streak Camera": {
#    class: hamamatsurx.StreakCamera,
#    role: streak-cam,
#    init: {
#        host: "172.16.4.2",  # Braunschweig System
#        port: 1001
#    },
#    children: {
#        readoutcam: "Streak Readout CCD",
#        delaybox: "Streak Delay Generator",
#        streakunit: "Streak Unit"
#    },
#    dependencies: {
#        spectrograph: "Spectrograph"
#    },
#}

"Streak Readout CCD": {
    role: streak-ccd,
    init: {
        image: "sparc-ar-mirror-align.h5",  # only for simulator!  TODO replace with streak image
#       device: 0,
        transp: [-1, 2], # if mirrored on X axis
    },
    metadata: {
        CALIB: {"intensity_limit": 50000},  # counts/s, high max to not trigger easily the safety check
    },
}

"Streak Unit": {
    role: streak-unit,
    init: {
#        settings_ini: "C:\ProgramData\Hamamatsu\HPDTA\SingleSweep.ini" # path of the .ini file for HPDTA to run
    },
    affects: ["Streak Readout CCD"],
}

"Streak Delay Generator": {
    role: streak-delay,
    init: {
    },
    metadata: {
        TIME_RANGE_TO_DELAY: {
          # timeRange (s) -> triggerDelay (s)
            1.0e-09: 7.99e-9,  # 1ns
            2.e-09: 9.63e-9,  # 2ns
            5.e-09: 3.32e-8,  # 5ns
            1.e-08: 4.59e-8,  # 10ns
            2.e-08: 6.64e-8,  # 20ns
            5.e-08: 1.02e-7,  # 50ns
            1.e-07: 1.69e-7,  # 100ns
            2.e-07: 3.02e-7,  # 200ns
            5.e-07: 7.31e-7,  # 500ns
            1.e-06: 1.39e-6,  # 1us
            2.e-06: 2.69e-6,  # 2us
            5.e-06: 7.02e-6,  # 5us
            1.e-05: 1.38e-5,  # 10us
            2.e-05: 2.67e-5,  # 20us
            5.e-05: 8.16e-5,  # 50us
            1.e-04: 1.61e-4,  # 100us
            2.e-04: 3.20e-4,  # 200us
            5.e-04: 7.98e-4,  # 500us
            1.e-03: 1.62e-3,  # 1ms
            2.e-03: 3.18e-3,  # 2ms
            5.e-03: 7.88e-3,  # 5ms
            1.e-02: 1.54e-2,  # 10ms
        },
    },
    affects: ["Streak Unit", "Streak Readout CCD"],
}

"Streak Lens": {
    class: static.OpticalLens,
    role: streak-lens,
    init: {
        mag: 0.476,  # set default value
        mag_choices: [1, 0.476],  # second is de-magnifying: 0.476 = 1/2.1
    },
    persistent: {
        properties: [magnification],
    },
    affects: ["Streak Readout CCD"],
}

"Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph,
    power_supplier: "Power Control Unit",
    init: {
        device: "fake",
        slits: {1: "slit-in", # INPUT_SIDE
        },
        bands: { # The filters in the filter-wheel
            1: [320.e-9, 400.e-9], # pos -> m,m
            2: [500.e-9, 550.e-9],
            3: [400.e-9, 450.e-9],
            4: "polariser",
            6: "pass-through"
        },
        fstepsize: 10.9e-6, # m, size of one focus step (very roughly)
        rng: {"focus": [10.9e-6, 4.9e-3]},  # the hardware has an issue, and cannot go further than 4.9mm (instead of the standard 6.5 mm)
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Streak Readout CCD"],
}

"Spectrograph focus": {
    class: actuator.MultiplexActuator,
    role: "focus",
    dependencies: {"z": "Spectrograph"},
    init: {
        axes_map: {"z": "focus"},
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Streak Readout CCD"],
}

# Provide the mirror (aka port selector) of the spectrograph as a separate component
"Spec CCD Flipper": {
    class: actuator.FixedPositionsActuator,
    role: "spec-det-selector",
    dependencies: {"rx": "Spectrograph"},
    init: {
        axis_name: "flip-out",
        positions: {
            0: ["Streak Readout CCD"],
            1.5707963267948966: ["Camera", "Spectrometer Vis-NIR"],
        },
    },
    affects: ["Camera", "Streak Readout CCD", "Spectrometer Vis-NIR"],
}

# Provide the filter wheel of the spectrograph as a separate component
"Spec Filter Wheel": {
    class: actuator.MultiplexActuator,
    role: filter,
    dependencies: {"band": "Spectrograph"},
    init: {
        axes_map: {"band": "band"},
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Streak Readout CCD"],
}

"Optical Path Properties": {
    class: static.OpticalLens,
    role: lens,
    # Standard mirror config
    init: {
       mag: 0.34, # ratio
       na: 0.2, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
       pole_pos: [458, 519], # (px, px), position of the pole (aka the hole in the mirror)
       x_max: 13.25e-3,  # m, the distance between the parabola origin and the cutoff position
       hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
       focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
       parabola_f: 2.5e-3,  # m, parabola_parameter=1/4f
       rotation: -1.570796326795, # rad, 90° rotation between optical axis and SEM Y axis
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Streak Readout CCD"]
}

# Controller for the motors moving the various parts of the optical box
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["l1", "l2", "cl-sel", "fw", "slit"],
        # These values are adapted to make the simulator roughly the same speed
        ustepsize: [25.1e-9, 25.1e-9, 26.1e-9, 3.392e-5, 5.e-9], # m/µstep, excepted for the fw: rad/µstep
        refproc: "Standard",
        refswitch: {"l1": 0, "l2": 0, "cl-sel": 4, "fw": 4},
        inverted: ["l2"],
    },
}

# The first lens of Plate 1, able to move along the whole range
"Lens1 Mover": {
    class: actuator.MultiplexActuator,
    role: "lens-mover",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l1"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.0045} # m
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Streak Readout CCD"],
}

# The second lens of Plate 1, either to working or parking position
"Lens2 Switch": {
    class: actuator.FixedPositionsActuator,
    role: "lens-switch",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axis_name: "l2",
        positions: {
            4.e-3: "on",
            0.002: "off", # completely out of the path
        },
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Streak Readout CCD"],
}

# Control the slit position to either fully-open or small (dependent on the spectrometer slit-in)
"Slit": {
    class: actuator.FixedPositionsActuator,
    role: "slit-in-big",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axis_name: "slit",
        positions: {
            0: "on", # fully opened
            -0.0012: "off", # opening based on the small slit
        },
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Streak Readout CCD"],
}

# Mirror in Plate 2, selects between spectrometer and cl-detector
"CL Selector": {
    class: actuator.FixedPositionsActuator,
    role: "cl-det-selector",
    dependencies: {"x": "Optical Actuators"},
    init: {
        axis_name: "cl-sel",
        positions: {
            0.003: ["CL Detector"],
            0.01: ["Spec CCD Flipper"]
        },
    },
    affects: ["Camera", "Spectrometer Vis-NIR", "Streak Readout CCD", "CL Detector"],
}

"CL Filter Wheel": {
    class: actuator.FixedPositionsActuator,
    role: "cl-filter",
    dependencies: {"band": "Optical Actuators"},
    init: {
        axis_name: "fw",
        # It supports up to 8 filters
        positions: {
            # pos (rad) -> m,m
            0: [420.e-9, 460.e-9],        # 1
            0.785398: [500.e-9, 550.e-9], # 2
            1.570796: "polariser",        # 3
            3.9269908: "pass-through",    # 6
        },
        cycle: 6.283185, # position of ref switch (0) after a full turn
    },
    affects: ["CL Detector"],
}

# Controller for moving the 'Redux' stage
# Note: the S axis can _only_ be moved when the l axis is near the active/engaged position
"Mirror Actuators": {
    class: tmcm.TMCLController,
    role: "mirror",
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["s", "l"],
        ustepsize: [1.e-6, 1.e-6], # m/µstep (big, for the simulator to move fast)
        refproc: "Standard",
        refswitch: {"s": 0, "l": 0},
    },
    metadata: {
        # Default position of the mirror engaged (will be improved during alignment)
        FAV_POS_ACTIVE: {"l": 70.e-3, "s": 5.e-3},  # m, m
    },
}

# Internal component to convert between the referential of the mirror actuators
# and the X/Y referential of the SEM. Used by the mirror alignment functions.
"Mirror Actuators in XY referential": {
    class: actuator.ConvertStage,
    role: "mirror-xy",
    dependencies: {"orig": "Mirror Actuators"},
    init: {
        axes: ["l", "s"], # mapped respectively to X, Y
        rotation: -1.0471975511965976, # rad (= 60°)
        # Note: if you want to use absolute moves, add a "translation" too
    },
}

