# Configuration for the SPARC system at AMOLF, with only the angle resolved camera
# The main difference with the typical SPARC is that camera are Princeton-Instruments.
SPARC-AMOLF: {
    class: Microscope,
    role: sparc,
    emitters: ["EBeam ExtXY"],
    detectors: ["SED ExtXY", "ARCam", "Spec10"],
    actuators: ["MirrorMover"],
}

# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM ExtXY": {
    class: semcomedi.SEMComedi,
    role: none,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {scanner: "EBeam ExtXY", detector0: "SED ExtXY"}
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"EBeam ExtXY": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        channels: [0, 1],
        limits: [[3, -3], [-4, 4]],  # V
        settle_time: 10.e-6, # s
        hfw_nomag: 0.2, # m
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 200, # (ratio)
    },
    affects: ["SED ExtXY", SpecCam, ARCam] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SED ExtXY": { # aka ETD
    # Internal child of Quanta ExtXY, so no class
    role: se-detector,
    init: {
        channel: 0,
        limits: [-3, 3] # V
    },
}

# PIXIS via USB
ARCam: {
    class: pvcam.PVCam,
    role: ccd,
    init: {device: "rspipixis"} # use 0 if this symlink is no created
}

Spec10: {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer,
    children: {detector: "SpecCam", spectrograph: "FakeSP2300i"},
    properties: {
        binning: [4, 32],
    },
}

SpecCam: {
    class: andorcam2.FakeAndorCam2,
    role: sp-ccd,
    init: {device: 0} # same device number but it will actually be different device
}

# Simulated SP-2300i, the spectrograph part of the Spec-10
FakeSP2300i: {
    class: spectrapro.FakeSpectraPro,
    role: spectrograph,
    affects: [SpecCam],
    init: {
        port: "/dev/ttySP",
    },
}

MirrorMover: {
    class: simulated.Stage2D,
    role: mirror,
    affects: [SpecCam, ARCam],
    init: {axes: ["x", "y", "rz", "ry"]}, # rz = yaw, ry = pitch
    properties: {
        speed: {"x": 0.1, "y": 0.1, "rz": 0.1, "ry": 0.1} #m/s
    }
}


