# Configuration for the SPARC system at Chalmers University, with only the spectrometer
SPARC-Spec: {
    class: Microscope,
    role: sparc,
    emitters: ["EBeam ExtXY", "AR Lens"],
    detectors: ["SED ExtXY", "ARCam", "AndorSpec"], # Remove ARCam to not have the button in the GUI
    actuators: ["MirrorMover"],
}

# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM ExtXY": {
    class: semcomedi.SEMComedi,
    role: none,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {scanner: "EBeam ExtXY", detector0: "SED ExtXY"}
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"EBeam ExtXY": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        channels: [0, 1],
        limits: [[3, -3], [-4, 4]],  # V
        settle_time: 10.e-6, # s
        hfw_nomag: 0.1067, # m
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 244, # (ratio)
    },
    affects: ["SED ExtXY", AndorSpec, ARCam] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SED ExtXY": { # aka ETD
    # Internal child of Quanta ExtXY, so no class
    role: se-detector,
    init: {
        channel: 0,
        limits: [-3, 3] # V
    },
}

"AR Lens": {
    class: static.OpticalLens,
    role: lens,
    init: {mag: 0.4917, # ratio
           pole_pos: [1280, 1080], # (px, px), position of the pole (aka the hole in the mirror)
          }, 
    affects: ["ARCam"]
}

ARCam: {
    class: andorcam2.FakeAndorCam2,
    role: ccd,
    init: {
           device: 0,  # if a real camera is plugged in, it's usually 0
           #transpose: [1, -2], # mirrored on Y axis
           },
}

# Andor iDus 406 + Shamrock SR303i
AndorSpec: {
    class: andorcam2.AndorSpec, # Instantiates an Andorcam2 + Shamrock
    role: spectrometer,
    children: {shamrock: "SR303i"},
    init: {
           device: 0,  # first and only Andor SDK 2 camera
           #transpose: [-1, 2], # mirrored on X axis if camera is upside-down
           },
    properties: {
        #binning: [4, 400],
    },
}

SR303i: {
    # no class, as it's instantiated by AndorSpec
    role: spectrograph,
    init: {
        device: 0,
    },
}

# PI E-861 jumpers (. = off):
# X          = 1234.6..
# Y          = 123..6..
# RZ (yaw)   = 12.4.6..
# RY (pitch) = 12...6..
MirrorMover: {
    class: pigcs.FakeBus, # Simulated!
    role: mirror,
    init: {
        port: "/dev/ttyPIGCS",
        # X/Y are same axes as SEM
        # yaw/pitch are axes according to Mirror's orientation
        # rz = yaw, ry = pitch (from Mirror's point of view)
        # axis -> controller, channel, closed-loop?
        axes: {"y":  [1, 1, False],
               "x":  [2, 1, False],
               "ry": [3, 1, False],
               "rz": [4, 1, False]},
        # inverted: ["y", "ry"],
        #dist_to_steps: {"x": 100000, "y": 100000}, # step/m
    },
    properties: {
        speed: {"x": 0.1, "y": 0.1, "rz": 0.1, "ry": 0.1} # m/s
    }
}


