# Configuration for the SPARC system at Monash University
SPARC-MONASH: {
    class: Microscope,
    role: sparc,
    children: ["SEM E-beam", "Focus Lens", "Optical Emission Filter",
    "SEM Detector", "Angular Camera", "Spectrometer", "Monochromator",
    "Fiber Flipper", "Mirror Actuators", "Focus Lens Flipper", 
    "AR CCD-PMT Flipper", "Spec CCD-PMT Flipper", "Fiber Actuators", 
    "CL Detector", ],
}


# Can simulate a SEM connected to a DAQ board by using the comedi_test driver:
# sudo modprobe comedi comedi_num_legacy_minors=4
# sudo modprobe comedi_test
# sudo comedi_config /dev/comedi0 comedi_test 1000000,1000000
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: null,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {
       scanner: "SEM E-beam",
       detector0: "SEM Detector",
       detector1: "CL PMT",
       detector2: "Monochromator PMT",
       #counter0: "Monochromator PMT",
    }
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM ExtXY, so no class
    role: e-beam,
    init: {
        channels: [1, 0],
        limits: [[0, 5], [0, 5]],  # V
        park: [0, 0], # V
        settle_time: 5.e-6, # s
        hfw_nomag: 0.25, # m
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio)
    },
    affects: ["SEM Detector", "Spectrometer", "Angular Camera"] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI 0/AI GND
"SEM Detector": { # aka ETD
    # Internal child of SEM Scan Interface, so no class
    role: se-detector,
    init: {
        channel: 0, # 0-> sawtooth waves, 1-> square waves
        limits: [-3, 3] # V
    },
}

# CL PMT: composed of the control unit + the PMT output connected to the DAQ board

# Must be connected on AI 1/AI GND
"CL PMT": { # the raw detector of the PMT
    # Internal child of SEM Scan Interface, so no class but instead a creator
    creator: "SEM Scan Interface",
    role: null,
    init: {
        channel: 1, # 0-> sawtooth waves, 1-> square waves
        limits: [0, 5] # V
    },
}

"CL PMT control unit": {
    class: pmtctrl.PMTControl,
    role: null,
    init: {
        port: "/dev/fake", # for simulator
        prot_time: 0.0002,  # s
        prot_curr: 50.e-6,  # A
    }
}

"CL Detector": {
    class: pmtctrl.PMT,
    role: cl-detector,
    children: {
       "detector": "CL PMT",
       "pmt-control": "CL PMT control unit",
    },
}

# TODO: put correct info once fully implemented
# Must be connected on AI ?/AI GND
"Monochromator PMT": { # the raw detector of the counting PMT for monochromator
    # Internal child of SEM Scan Interface, so no class but instead a creator
    creator: "SEM Scan Interface",
    role: null,
    init: {
        channel: 2,
        limits: [0, 5] # V
    },
}

"Monochromator PMT control unit": {
    class: pmtctrl.PMTControl,
    role: null,
    init: {
        port: "/dev/fake", # for simulator
        prot_time: 0.0002,  # s
        prot_curr: 50.e-6,  # A
    }
}

"Monochromator": {
    class: pmtctrl.PMT,
    role: monochromator,
    children: {
       "detector": "Monochromator PMT",
       "pmt-control": "Monochromator PMT control unit",
    },
}

"Focus Lens": {
    class: static.OpticalLens,
    role: lens,
    # Big mirror config
    init: {
       mag: 0.4917, # ratio
       pole_pos: [458, 519], # (px, px), position of the pole (aka the hole in the mirror)
       x_max: 13.25e-3,  # m, the distance between the parabola origin and the cutoff position
       hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
       focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
       parabola_f: 2.5e-3,  # m, parabola_parameter=1/4f
    },
    # Small mirror config
    #init: {
    #   mag: 0.4917, # ratio
    #   pole_pos: [1280, 1080], # (px, px), position of the pole (aka the hole in the mirror)
    #   x_max: 10e-3,  # m, the distance between the parabola origin and the cutoff position
    #   hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
    #   focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
    #   parabola_f: 0.8e-3,  # m, parabola_parameter=1/4f
    #},
    affects: ["Angular Camera"]
}

# Thorlabs MFF102 holding the lens
# The convention for the position is:
# 0° (1)  -> no lens
# 90° (2) -> lens
"Focus Lens Flipper": {
    class: tlaptmf.MFF,
    role: lens-switch,
    init: {port: "/dev/fake", # for simulator
           #sn: "37857195",
           axis: "rx",
           # inverted: ["rx"],
    },
    affects: ["Focus Lens", "Angular Camera", "Spectrometer"]  
}

# Thorlabs FW102C with some filters
"Optical Emission Filter": {
    class: tlfw.FakeFW102c,
    role: filter,
    init: {port: "/dev/ttyFTDI*", # will automatically find the right port
           bands: {1: [420.e-9, 460.e-9], # pos -> m,m
                   2: [500.e-9, 550.e-9],
                   3: "polariser",
                   6: "pass-through"},
           },
    affects: ["Angular Camera", "Spectrometer", "CL Detector", "Monochromator"]
}

# Andor Zyla
#"Angular Camera": {
#    class: andorcam3.AndorCam3,
#    role: ccd,
#    init: {
#        device: 0,  # if a real camera is plugged in, it's usually 0
#        transpose: [1, -2], # mirrored on Y axis
#    },
#    properties: {
#        fanSpeed: 0.0, # 0 = Off, 0.5= half speed, 1 = max speed
#    }
#}

"Angular Camera": {
    class: andorcam2.AndorCam2,
    role: ccd,
    init: {
       device: "fake",
       image: "sparc-ar-mirror-align.h5", # only for simulator
    },
}

# Thorlabs MFF102 holding the mirror to select AR CCD or AR PMT
# The convention for the position is:
# 0° (1)  -> AR CCD
# 90° (2) -> AR PMT
"AR CCD-PMT Flipper": {
    class: tlaptmf.MFF,
    role: ar-det-selector,
    init: {port: "/dev/fake", # for simulator
           #sn: "37857191",
           axis: "rx",
           # inverted: ["rx"],
    },
    affects: ["Angular Camera", "CL Detector"]
}


# Thorlabs MFF102 holding the mirror to select AR or spectrometer
# The convention for the position is:
# 0° (1)  -> AR
# 90° (2) -> spectrometer
"Fiber Flipper": {
    class: tlaptmf.MFF,
    role: ar-spec-selector,
    init: {port: "/dev/fake", # for simulator
           #sn: "37857201",
           axis: "rx",
           # inverted: ["rx"],
    },
    affects: ["Angular Camera", "Spectrometer"]  
}

# Spectrometer = Andor iVac 316 + Shamrock SR303i (connected via USB)
"Spectrometer": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer,
    children: {detector: "Spectral Camera", spectrograph: "Spectrograph"},
    properties: {
        #binning: [4, 256],
    },
}

"Spectral Camera": {
    class: andorcam2.AndorCam2,
    role: sp-ccd,
    init: {
       device: "fake",
       transpose: [1, -2], # if mirrored on X axis (due to a Odemis bug, it's the second dim which has the -)
    },
    properties: {
        targetTemperature: -60, # °C
    },
}

"Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph,
    affects: ["Monochromator", "Spectral Camera"],
    children: {"ccd": "Spectral Camera"},
    init: {
        device: "fake",
        slits: {1: "slit-in", # INPUT_SIDE
                3: "slit-monochromator", # OUTPUT_SIDE
        },
        # accessory: "slitleds",
    },
}

# Provide the mirror of the spectrograph as a separate component
"Spec CCD-PMT Flipper": {
    class: actuator.MultiplexActuator,
    role: spec-det-selector,
    affects: ["Monochromator", "Spectral Camera"],
    children: {"rx": "Spectrograph"},
    init: {
        axes_map: {"rx": "flip-out"},
    },
    affects: ["Spectrometer", "Monochromator"],
}

# PI E-861 over IP (can be static IP, or via DCHP)
"Mirror Actuators": {
    class: pigcs.FakeBus,
    role: mirror,
    init: {
        port: "/dev/ttyPIGCS",
        # X/Y are same axes as SEM
        # yaw/pitch are axes according to Mirror's orientation
        # rz = yaw, ry = pitch (from Mirror's point of view)
        # axis -> controller, channel, closed-loop?
        axes: {"x":  [1, 1, False],
               "y":  [2, 1, False],
               "ry": [3, 1, False],
               "rz": [4, 1, False]},
        # inverted: ["y", "ry"],
        #dist_to_steps: {"x": 100000, "y": 100000}, # step/m
    },
    properties: {
    #    speed: {"x": 0.01, "y": 0.01, "rz": 0.01, "ry": 0.01} # m/s
    }
}

# New Focus 8742, configured to use network connection with DCHP
# X axis as motor 1
# Y axis as motor 2
"Fiber Actuators": {
    class: nfpm.PM8742,
    role: fiber-aligner,
    init: {
        address: "fake", # put the IP address if static IP is used, or "autoip"
        sn: "11511",
        # X/Y are wrt light path (from the sample to the detector)
        axes: ["x", "y"],
        stepsize: [33.e-9, 33.e-9] # m/step
    },
}
